PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=C1D29EVY
  Data filename = u'data/%s_%s_%s' % (expInfo['PROLIFIC_PID'], expName, expInfo['date'])
  Experiment info = {'PROLIFIC_PID': '', 'STUDY_ID': '', 'SESSION_ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = Mood2
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine instructions1
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    TextComponent Intro_text_show
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $Intro_text
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    TextComponent Continue_txt
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0
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    CodeComponent initialize_variables
      Code Type = Both
      Before Experiment:
        import numpy as np # Keep in mind that by default, numpy version is 1.26
        import time
        import sys

        # Set happiness trials
        # numBlocks = 4
        # happyTrialIdx = np.ceil(np.linspace(2, 36*numBlocks, 12*numBlocks))
        # print(sys.version)

        start_money = 5 # Start amount
        pie_size = 3.36
        width = 0.3
        rew_txt_margin = 0.12
        time_first_delay = 2
        time_gamble_show = 1 # in seconds
        time_gamble_delay = 0.5
        time_chosen_gamble = 1
        time_gamble_result = 2 # time after which they go to the next trial
        time_iti = 1
        nedges = 100

        numBlocks = 4
        happyTrialIdx = np.hstack((3*np.ones(7*numBlocks), 2*np.ones(8*numBlocks)))
        happyTrialIdx = happyTrialIdx[np.random.permutation(len(happyTrialIdx))]
        happyTrialIdx = np.cumsum(happyTrialIdx)-1

        happyTrial = np.zeros(37*numBlocks)
        for i in happyTrialIdx:
            happyTrial[int(i)] = 1

        happyTrial = (happyTrial != 0)


        #happyTrialIdx_prac = np.ceil(np.linspace(2, 9*10, 3*10))
        happyTrialIdx_prac = np.hstack((3*np.ones(2*10), 2*np.ones(2*10)))
        happyTrialIdx_prac = happyTrialIdx_prac[np.random.permutation(len(happyTrialIdx_prac))]
        happyTrialIdx_prac = np.cumsum(happyTrialIdx_prac)-1

        happyTrial_prac = np.zeros(100)
        for i in happyTrialIdx_prac:
            happyTrial_prac[int(i)] = 1

        happyTrial_prac = (happyTrial_prac != 0)


        npractice_trials = 10   # Number of practice trails
        ntrials        = 148    # Number of trails
        ntotal_trials  = ntrials + (npractice_trials*3) # Allow max 3 reapeats of the practice trials
        reward         = [0.03, 0.04, 0.06]     # All possible reward amounts
        reward_propor  = [round(ntotal_trials * 2 * 0.125), # Represents the total number of occurences when each reward should appear. May have to change from 12.5% to 12% to respect the total amount of trials
                            round(ntotal_trials * 2 * 0.4375),
                            round(ntotal_trials * 2 * 0.4375)]
        proba_vec      = np.random.randint(19, size=(2*ntotal_trials-reward_propor[0],1)) # Generate the probabilities for each ntrials
        proba_vec      = (proba_vec * 5) + 5
        reward_vec     = np.concatenate((reward[1]*np.ones((reward_propor[1],1)), reward[2]*np.ones((reward_propor[2],1))), axis=0)
        proba_vec      = np.concatenate((proba_vec.astype(int), 100 * np.ones((reward_propor[0],1), dtype=int)), axis=0)
        reward_vec     = np.concatenate((reward_vec, reward[0]* np.ones((reward_propor[0],1))), axis=0)
        gambles        = np.hstack((proba_vec, reward_vec))
        gambles        = np.random.permutation(gambles)
        gambles        = np.hstack((gambles[:ntotal_trials,:], gambles[ntotal_trials:,:]))
        gamble_result  = np.random.randint(101, size=(ntotal_trials,1))

        gambles_txt = []
        for n in range(ntotal_trials):
            gamble1 = f"{gambles[n, 0]:.0f}%"  # Gamble1
            if gambles[n, 1] == reward[2]:
                gamble2 = f"BIG"
        #        gamble2 = f"BIG (${gambles[n, 1]:.2f})"
            elif gambles[n, 1] == reward[1]:
                gamble2 = f"MEDIUM"
        #        gamble2 = f"MEDIUM (${gambles[n, 1]:.2f})"
            else:
                gamble2 = f"SMALL"
        #        gamble2 = f"SMALL (${gambles[n, 1]:.2f})"

            gamble3 = f"{gambles[n, 2]:.0f}%"  # Gamble2
            if gambles[n, 3] == reward[2]:
                gamble4 = f"BIG"
        #        gamble4 = f"BIG (${gambles[n, 3]:.2f})"
            elif gambles[n, 3] == reward[1]:
                gamble4 = f"MEDIUM"
        #        gamble4 = f"MEDIUM (${gambles[n, 3]:.2f})"
            else:
                gamble4 = f"SMALL"
        #        gamble4 = f"SMALL (${gambles[n, 3]:.2f})"

            gambles_txt.append([gamble1, gamble2, gamble3, gamble4])

        current_money = start_money

        #thisExp.addData("Gambles", gambles[3*npractice_trials:][:]) No need: each gamble is saved to the exp on each trial loop
        #thisExp.addData("Practice gamble", gambles[0:3*npractice_trials][:])
      Before JS Experiment:
        // Import necessary modules
        import * as lodash from 'https://cdn.jsdelivr.net/npm/lodash-es@4.17.21/lodash.js';
        // Note: Javascript works with scopes for the variables, if your variable is defined within a scope,
        //you won't be able to use it in another scope. This is why this code is in the before experiment section:
        //the variables defined here will be usable in the rest of the experiment code

        // Initiate variables
        let start_money = 5;    // Start amount
        let pie_size = 3.36;
        let width = 0.3;
        let rew_txt_margin = 0.17;
        let time_first_delay = 2;
        let time_gamble_show = 1;    // in seconds
        let time_gamble_delay = 0.5;
        let time_chosen_gamble = 1;
        let time_gamble_result = 2;    // time after which they go to the next trial
        let time_iti = 1;
        let nedges = 100;    //The resolution of the gamble pies: number of flat edges of the pie
        let numBlocks = 4;    // Number of breaks during the real trial, blocks of 37 trials (changing it might break some stuff)
        let npractice_trials = 3*10;    // Number of practice trials (Participant can repeat practice 3 times)
        let ntrials = 148;    // Number of trials
        let reward = [0.03, 0.04, 0.06];    // All possible reward amounts

        // Practice trials:

        // happiness trials
        let happyTrialIdx_prac = lodash.concat(
          Array(2 * 10).fill(3),
          Array(2 * 10).fill(2)
        );
        happyTrialIdx_prac = lodash.shuffle(happyTrialIdx_prac);    // Randomly permute the array
        happyTrialIdx_prac = lodash.reduce(happyTrialIdx_prac, (result, val, index) => {
          result.push((result[index - 1] || 0) + val);    // Add current value to previous sum
          return result;
        }, []);
        let happyTrial_prac = new Array(100).fill(0);
        happyTrialIdx_prac.forEach(i => {
          happyTrial_prac[i] = 1;
        });
        happyTrial_prac = happyTrial_prac.map(val => val !== 0);

        let p_reward_propor = [ // Represents the total number of occurrences when each reward should appear
          Math.round(npractice_trials * 2 * 0.125), // Changed from 12.5% to 12% in order to respect the total number of trials
          Math.round(npractice_trials * 2 * 0.4375),
          Math.round(npractice_trials * 2 * 0.4375)
        ];

        // Generate probabilities and rewards
        let p_proba_vec = lodash.times(2 * npractice_trials - p_reward_propor[0], () => (Math.floor(Math.random() * 18)+1))  // Generate random probabilities
          .map(val => (val * 5));
        let p_reward_vec = lodash.concat(
          Array(p_reward_propor[1]).fill(reward[1]),
          Array(p_reward_propor[2]).fill(reward[2])
        );
        p_proba_vec = lodash.concat(p_proba_vec, Array(p_reward_propor[0]).fill(100));
        p_reward_vec = lodash.concat(p_reward_vec, Array(p_reward_propor[0]).fill(reward[0]));
        let p_gambles = lodash.shuffle(lodash.zip(p_proba_vec, p_reward_vec));
        p_gambles = lodash.zip(p_gambles.map(row => row[0]).slice(0, npractice_trials), p_gambles.map(row => row[1]).
        slice(0, npractice_trials), p_gambles.map(row => row[0]).slice(npractice_trials , p_proba_vec.length+1), p_gambles.map(row => row[1]).slice(npractice_trials, p_proba_vec.length+1));  // Combine probabilities and rewards
        console.log(p_gambles)
        let p_gamble_result = lodash.times(npractice_trials, () => Math.floor(Math.random() * 101));
        console.log(p_gamble_result)
        let p_gambles_txt = []; // CAREFULL: here indicies 0 to 2 are for gamble 1 and indices 3 to 5 are for gamble 2 (different from gambles indices)
        for (let n = 0; n < npractice_trials; n++) {
          let gamble1 = `${p_gambles[n][0]}%`;  // Gamble1
          let gamble2 = p_gambles[n][1] === reward[2] ? 'BIG' :
                        p_gambles[n][1] === reward[1] ? 'MEDIUM' : 'SMALL';
          let gamble3 = p_gambles[n][1] === reward[2] ? `($${p_gambles[n][1].toFixed(2)})` :
                        p_gambles[n][1] === reward[1] ? `($${p_gambles[n][1].toFixed(2)})` : `($${p_gambles[n][1].toFixed(2)})`;
          let gamble4 = `${p_gambles[n][2]}%`;  // Gamble2
          let gamble5 = p_gambles[n][3] === reward[2] ? 'BIG' :
                        p_gambles[n][3] === reward[1] ? 'MEDIUM' : 'SMALL';
          let gamble6 = p_gambles[n][3] === reward[2] ? `($${p_gambles[n][3].toFixed(2)})` :
                        p_gambles[n][3] === reward[1] ? `($${p_gambles[n][3].toFixed(2)})` : `($${p_gambles[n][3].toFixed(2)})`;
          p_gambles_txt.push([gamble1, gamble2, gamble3, gamble4, gamble5, gamble6]);
        }
        console.log(p_gambles_txt)

        // Real trials:

        // happiness trials
        let happyTrialIdx = lodash.concat(
          Array(7 * numBlocks).fill(3),
          Array(8 * numBlocks).fill(2)
        );
        happyTrialIdx = lodash.shuffle(happyTrialIdx);    // Randomly permute the array
        happyTrialIdx = lodash.reduce(happyTrialIdx, (result, val, index) => {
          result.push((result[index - 1] || 0) + val);    // Add current value to previous sum
          return result;
        }, []);
        let happyTrial = new Array(37 * numBlocks).fill(0);
        happyTrialIdx.forEach(i => {
          happyTrial[i] = 1;
        });
        happyTrial = happyTrial.map(val => val !== 0);

        // Storing the number of occurrences of each reward
        let reward_propor = [ // Represents the total number of occurrences when each reward should appear
          Math.round(ntrials * 2 * 0.12), // Changed from 12.5% to 12% in order to respect the total number of trials
          Math.round(ntrials * 2 * 0.4375),
          Math.round(ntrials * 2 * 0.4375)
        ];

        // Generate probabilities and rewards
        let proba_vec = lodash.times(2 * ntrials - reward_propor[0], () => (Math.floor(Math.random() * 18)+1))  // Generate random probabilities
          .map(val => (val * 5));
        let reward_vec = lodash.concat(
          Array(reward_propor[1]).fill(reward[1]),
          Array(reward_propor[2]).fill(reward[2])
        );
        proba_vec = lodash.concat(proba_vec, Array(reward_propor[0]).fill(100));
        reward_vec = lodash.concat(reward_vec, Array(reward_propor[0]).fill(reward[0]));
        let gambles = lodash.shuffle(lodash.zip(proba_vec, reward_vec));
        gambles = lodash.zip(gambles.map(row => row[0]).slice(0, ntrials), gambles.map(row => row[1]).slice(0, ntrials), gambles.map(row => row[0]).slice(ntrials, proba_vec.length+1), gambles.map(row => row[1]).slice(ntrials, proba_vec.length+1));  // Combine probabilities and rewards
        console.log(gambles)
        let gamble_result = lodash.times(ntrials, () => Math.floor(Math.random() * 101));
        console.log(gamble_result)
        let gambles_txt = [];
        for (let n = 0; n < ntrials; n++) {
          let gamble1 = `${gambles[n][0]}%`;  // Gamble1
          let gamble2 = gambles[n][1] === reward[2] ? 'BIG' :
                        gambles[n][1] === reward[1] ? 'MEDIUM' : 'SMALL';
          let gamble3 = gambles[n][1] === reward[2] ? `($${gambles[n][1].toFixed(2)})` :
                        gambles[n][1] === reward[1] ? `($${gambles[n][1].toFixed(2)})` : `($${gambles[n][1].toFixed(2)})`;
          let gamble4 = `${gambles[n][2]}%`;  // Gamble2
          let gamble5 = gambles[n][3] === reward[2] ? 'BIG' :
                        gambles[n][3] === reward[1] ? 'MEDIUM' : 'SMALL';
          let gamble6 = gambles[n][3] === reward[2] ? `($${gambles[n][3].toFixed(2)})` :
                        gambles[n][3] === reward[1] ? `($${gambles[n][3].toFixed(2)})` : `($${gambles[n][3].toFixed(2)})`;
          gambles_txt.push([gamble1, gamble2, gamble3, gamble4, gamble5, gamble6]);
        }

        let p_current_money = start_money;
        let current_money = start_money;

        // For each trial, the gamble results would be processed here
        // e.g., thisExp.addData("Gambles", gambles[3 * npractice_trials:][:]);

        console.log("Gambles Text:", gambles_txt);
      Begin Experiment:
        startTime = time.strftime("%Y-%m-%d_%H.%M.%S")
        thisExp.addData("dateTime", startTime)
      Begin JS Experiment:
        let startTime = new Date().toISOString().replace('T', '_').replace(/:/g, '.').split('.')[0];
        console.log("dateTime:", startTime);
  Routine instructions_t1_target_on_choice
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        Intro_gamble_1 = reward[2];
        Intro_gamble_2 = reward[1];

        Gamble1_green = new visual.Polygon({win: psychoJS.window, fillColor: "Green", colorSpace: "rgb", edges: nedges, pos: [(- width), 0], radius: (Intro_gamble_1 * pie_size), lineWidth: 0});
        fullCircle1Vertices = Gamble1_green.vertices;
        fullCircle1Vertices.push(fullCircle1Vertices[0]);
        slice = [[0, 0]];
        slice.push(...fullCircle1Vertices.slice(0, (nedges*0.7)+1));
        Gamble1_green.vertices = slice;
        Gamble1_red = new visual.Polygon({win: psychoJS.window, fillColor: [(-0.2), (-0.2), (-0.2)], colorSpace: "rgb", edges: nedges, pos: [(- width), 0], radius: (Intro_gamble_1 * pie_size), lineWidth: 0});
        slice = [[0, 0]];
        slice.push(...fullCircle1Vertices.slice((nedges*0.7), (fullCircle1Vertices.length)+1));
        Gamble1_red.vertices = slice;

        Gamble2_green = new visual.Polygon({win: psychoJS.window, fillColor: "Green", colorSpace: "rgb", edges: nedges, pos: [width, 0], radius: (Intro_gamble_2 * pie_size), lineWidth: 0});
        fullCircle2Vertices = Gamble2_green.vertices;
        fullCircle2Vertices.push(fullCircle2Vertices[0]);
        slice = [[0, 0]];
        slice.push(...fullCircle2Vertices.slice(0, (nedges*0.45)+1));
        Gamble2_green.vertices = slice;
        Gamble2_red = new visual.Polygon({win: psychoJS.window, fillColor: [(-0.2), (-0.2), (-0.2)], colorSpace: "rgb", edges: nedges, pos: [width, 0], radius: (Intro_gamble_2 * pie_size), lineWidth: 0});
        slice = [[0, 0]];
        slice.push(...fullCircle2Vertices.slice((nedges*0.45), fullCircle2Vertices.length+1));
        Gamble2_red.vertices = slice;

        Gamble1_green.setAutoDraw(true);
        Gamble1_red.setAutoDraw(true);
        Gamble2_green.setAutoDraw(true);
        Gamble2_red.setAutoDraw(true);
      Begin Routine:
        Intro_gamble_1 = reward[2]
        Intro_gamble_2 = reward[1]

        Gamble1_green = visual.Polygon(win, fillColor = "Green", colorSpace = "rgb", edges = 100, pos=(-width, 0), radius=Intro_gamble_1*pie_size, lineWidth = 0)
        fullCircle1Vertices = Gamble1_green.vertices
        greenslice = [(0,0)]
        greenslice.extend(fullCircle1Vertices[0:71])
        Gamble1_green.vertices = greenslice
        Gamble1_red = visual.Polygon(win, fillColor = (-0.2,-0.2,-0.2), colorSpace = 'rgb', edges = 100, pos=(-width, 0), radius=Intro_gamble_1*pie_size,  lineWidth = 0, ori=(360*1/100))
        redslice = [(0, 0)]
        redslice.extend(fullCircle1Vertices[69:101])
        Gamble1_red.vertices = redslice

        Gamble2_green = visual.Polygon(win, fillColor = "Green", colorSpace = "rgb", edges = 100, pos=(width, 0), radius=Intro_gamble_2*pie_size, lineWidth = 0)
        fullCircle2Vertices = Gamble2_green.vertices
        greenslice = [(0,0)]
        greenslice.extend(fullCircle2Vertices[0:46])
        Gamble2_green.vertices = greenslice
        Gamble2_red = visual.Polygon(win, fillColor = (-0.2,-0.2,-0.2), colorSpace = "rgb", edges = 100, pos=(width, 0), radius=Intro_gamble_2*pie_size, lineWidth = 0, ori=(360*1/100))
        redslice = [(0,0)]
        redslice.extend(fullCircle2Vertices[44:101])
        Gamble2_red.vertices = redslice
      Each Frame:
        Gamble1_green.draw()
        Gamble1_red.draw()

        Gamble2_green.draw()
        Gamble2_red.draw()
      End JS Routine:
        Gamble1_green.setAutoDraw(false);
        Gamble1_red.setAutoDraw(false);
        Gamble2_green.setAutoDraw(false);
        Gamble2_red.setAutoDraw(false);
    PolygonComponent fixation_inst_5a
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent gamble1_txt_inst_5a
      letterHeight = 0.04
      pos = (-width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent gamble1_txt_inst_5a_low
      letterHeight = 0.025
      pos = (-width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text = (\$0.06)
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    TextComponent gamble1_prob_inst_5a
      letterHeight = 0.04
      pos = (-width, 0)
      startVal [time (s)] = 0.0
      text = 70%
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    TextComponent gamble2_txt_inst_5a
      letterHeight = 0.04
      pos = (width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text = MEDIUM
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    TextComponent gamble2_txt_inst_5a_low
      letterHeight = 0.025
      pos = (width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text = (\$0.04)
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    TextComponent gamble2_prob_inst_5a
      letterHeight = 0.04
      pos = (width, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = 45%
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    KeyboardComponent choice_inst_5a
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_inst_5a
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        On this trial you can either choose a 70% chance of getting a BIG (\$0.06) reward, or you can choose a 45% chance of getting a MEDIUM reward (\$0.04).

        Press the <left arrow key> to select the left gamble with the BIG reward.
  Routine instructions_t1_outcome
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    TextComponent total_prompt_inst_5a
      letterHeight = 0.05
      pos = (-0.55, 0.4)
      startVal [time (s)] = 0.0
      text = Current total: 
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    TextComponent curr_total_inst_5a
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.06
      pos = (-0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = \$5.06
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    PolygonComponent fixation_inst_5a_4
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent p_outcome_square_2
      fillColor [set every repeat] = green
      lineColor [set every repeat] = green
      pos [set every repeat] = (-width, 0)
      shape = rectangle
      size [set every repeat] = (reward[2]*pie_size*2, reward[2]*pie_size*2)
      startVal [time (s)] = 0.0
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    TextComponent intro_outcome_text
      letterHeight = 0.06
      pos = (-width, 0.03)
      startVal [time (s)] = 0.0
      text = Win!
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    TextComponent intro_outcome_text_2
      letterHeight = 0.03
      pos = (-width, -0.03)
      startVal [time (s)] = 0.0
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      text:
        BIG
        (\$0.06)
    TextComponent intro_next_trial_txt_2
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0
      text = Press the <space bar> to do another introductory trial
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    KeyboardComponent intro_next_trial_input_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instructions_t2_target_on_choice
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    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        Intro_gamble2_1 = reward[0];
        Intro_gamble2_2 = reward[1];

        Gamble1_green = new visual.Polygon({win: psychoJS.window, fillColor: "Green", colorSpace: "rgb", edges: nedges, pos: [(- width), 0], radius: (Intro_gamble2_1 * pie_size), lineWidth: 0});
        fullCircle1Vertices = Gamble1_green.vertices;
        fullCircle1Vertices.push(fullCircle1Vertices[0]);
        slice = [[0, 0]];
        slice.push(...fullCircle1Vertices.slice(0, (fullCircle1Vertices.length+1)));
        Gamble1_green.vertices = slice;
        Gamble1_red = new visual.Polygon({win: psychoJS.window, fillColor: [(-0.2), (-0.2), (-0.2)], colorSpace: "rgb", edges: nedges, pos: [width, 0], radius: (Intro_gamble2_1 * pie_size), lineWidth: 0});
        slice = [[0, 0]];
        slice.push(...fullCircle1Vertices.slice((fullCircle1Vertices.length+1), fullCircle1Vertices.length+1));
        Gamble1_red.vertices = slice;

        Gamble2_green = new visual.Polygon({win: psychoJS.window, fillColor: "Green", colorSpace: "rgb", edges: nedges, pos: [width, 0], radius: (Intro_gamble2_2 * pie_size), lineWidth: 0});
        fullCircle2Vertices = Gamble2_green.vertices;
        fullCircle2Vertices.push(fullCircle2Vertices[0]);
        slice = [[0, 0]];
        slice.push(...fullCircle2Vertices.slice(0, (0.95*nedges)+1));
        Gamble2_green.vertices = slice;
        Gamble2_red = new visual.Polygon({win: psychoJS.window, fillColor: [(-0.2), (-0.2), (-0.2)], colorSpace: "rgb", edges: nedges, pos: [width, 0], radius: (Intro_gamble2_2 * pie_size), lineWidth: 0});
        slice = [[0, 0]];
        slice.push(...fullCircle2Vertices.slice((0.95*nedges), fullCircle2Vertices.length+1));
        Gamble2_red.vertices = slice;

        Gamble1_green.setAutoDraw(true);
        Gamble1_red.setAutoDraw(true);
        Gamble2_green.setAutoDraw(true);
        Gamble2_red.setAutoDraw(true);
      Begin Routine:
        Intro_gamble2_1 = reward[0]
        Intro_gamble2_2 = reward[1]

        Gamble1_green = visual.Pie(win, fillColor = 'Green', colorSpace = 'rgb',start = 0,end = 1*360, pos=(-width,0), radius=Intro_gamble2_1*pie_size)
        Gamble1_red = visual.Pie(win, fillColor = (-0.2,-0.2,-0.2), colorSpace = 'rgb',start = 1*360,end = 360, pos=(-width,0), radius=Intro_gamble2_1*pie_size)

        Gamble2_green = visual.Pie(win, fillColor = 'Green', colorSpace = 'rgb',start = 0,end = 0.95*360,pos=(width,0), radius=Intro_gamble2_2*pie_size)
        Gamble2_red = visual.Pie(win, fillColor = (-0.2,-0.2,-0.2), colorSpace = 'rgb',start = 0.95*360,end = 360, pos=(width,0), radius=Intro_gamble2_2*pie_size)
      Each Frame:
        Gamble1_green.draw()
        Gamble1_red.draw()
        Gamble2_green.draw()
        Gamble2_red.draw()
      End JS Routine:
        Gamble1_green.setAutoDraw(false);
        Gamble1_red.setAutoDraw(false);
        Gamble2_green.setAutoDraw(false);
        Gamble2_red.setAutoDraw(false);
    PolygonComponent fixation_inst_5b
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent gamble1_txt_inst_5a_3
      letterHeight = 0.04
      pos = (-width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text = SMALL
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    TextComponent gamble1_txt_inst_5a_low_3
      letterHeight = 0.025
      pos = (-width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text = (\$0.03)
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    TextComponent gamble1_prob_inst_5a_3
      letterHeight = 0.04
      pos = (-width, 0)
      startVal [time (s)] = 0.0
      text = 100%
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    TextComponent gamble2_txt_inst_5a_2
      letterHeight = 0.04
      pos = (width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text = MEDIUM
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    TextComponent gamble2_txt_inst_5a_low_2
      letterHeight = 0.025
      pos = (width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text = (\$0.04)
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    TextComponent gamble2_prob_inst_5a_2
      letterHeight = 0.04
      pos = (width, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = 95%
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    KeyboardComponent choice_inst_5b
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_inst_5b
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        On this trial you can either choose to win a SMALL (\$0.03) reward for certain, or choose a 95% chance of getting a MEDIUM (\$0.04) reward.

        Press the <right arrow key> to select the MEDIUM gamble.
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  Routine instructions6
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    TextComponent instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = On the gamble outcome screen, the top of the screen will display the total amount of money  you earned, and your progress throughout the task will be displayed on a progress bar at the  bottom. The next screen will show you an example.
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    TextComponent Continue_txt_2
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions7
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    PolygonComponent fixation_inst_5a_6
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent total_prompt_inst
      letterHeight = 0.05
      pos = (-0.55, 0.4)
      startVal [time (s)] = 0.0
      text = Current total: 
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    TextComponent curr_total_inst
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.06
      pos = (-0.3, 0.4)
      startVal [time (s)] = 0.0
      text = \$5
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    PolygonComponent p_outcome_square_4
      fillColor [set every repeat] = red
      lineColor [set every repeat] = red
      pos [set every repeat] = (-width, 0)
      shape = rectangle
      size [set every repeat] = (reward[1]*pie_size*2, reward[1]*pie_size*2)
      startVal [time (s)] = 0.0
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    TextComponent intro_outcome_text_5
      letterHeight = 0.06
      pos = (-width, 0)
      startVal [time (s)] = 0.0
      text = Loss!
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    KeyboardComponent key_resp_inst_6
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instrutions_text
      color = blue
      letterHeight = 0.04
      pos = (0.45, 0.1)
      startVal [time (s)] = 0.0
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      text:
        This is an example outcome screen for a
        loss, also showing your current total
        and the progress bar (about half way
        through the session).

        Press <enter> to continue
    ProgressComponent prog_5
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.5, -0.45)
      progress = 0.55
      size = (1, 0.03)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent arrow1
      fillColor = blue
      lineColor = blue
      ori = -60
      pos = (-0.2, 0.3)
      shape = arrow
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow2
      fillColor = blue
      lineColor = blue
      ori = -160
      pos = (0.05, -0.3)
      shape = arrow
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
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  Routine instructions8
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    TextComponent instructions_text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = At various points throughout the task you will be asked to rate your happiness. When you are asked to make a happiness rating, click a number 1-20 to reflect your rating from 1 (very unhappy) to 20 (very happy). 
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    TextComponent Continue_txt_3
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_7
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions10
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    TextComponent instructions_text_6
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Just now, you were asked to think about your life overall. Now, think about just right now. How happy are you at this moment?

        During the task you will be asked this question many times. It is VERY important that you use as much of the rating scale as you can.

        In a moment you will complete some practice trials. The least happy you remember being during the practice session should correspond to somewhere in the lower half of the rating scale. The most happy you remember being should correspond to somewhere in the upper half.
    TextComponent Continue_txt_4
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_8
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions11
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    TextComponent instructions_text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = You will now complete 10 practice trials. Try to remember the least and most happy you feel during the practice trials to guide your happiness ratings throughout the task.
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    TextComponent Continue_txt_5
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_9
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_delay
    RoutineSettingsComponent first_delay
      stopVal [duration (s)] = $time_first_delay
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine p_gamble1_show
    RoutineSettingsComponent p_gamble1_show
      forceNonSlip = True
      stopVal [duration (s)] = $time_gamble_show
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    CodeComponent p_gamble1_code
      Code Type = Both
      Begin JS Routine:
        p_gamble1_p = p_gambles[practice_trials.thisN][0];
        p_gamble1_r = p_gambles[practice_trials.thisN][1];
        gamble1_size = (p_gamble1_r * pie_size);

        Gamble1_green = new visual.Polygon({win: psychoJS.window, fillColor: "Green", colorSpace: "rgb", edges: nedges, pos: [(- width), 0], radius: gamble1_size, lineWidth: 0});
        fullCircle1Vertices = Gamble1_green.vertices;
        fullCircle1Vertices.push(fullCircle1Vertices[0]);
        slice = [[0, 0]];
        slice.push(...fullCircle1Vertices.slice(0, p_gamble1_p+1));
        Gamble1_green.vertices = slice;
        Gamble1_red = new visual.Polygon({win: psychoJS.window, fillColor: [(-0.2), (-0.2), (-0.2)], colorSpace: "rgb", edges: nedges, pos: [(- width), 0], radius: gamble1_size, lineWidth: 0});
        slice = [[0, 0]];
        if (p_gamble1_r === reward[0]) {
            slice.push(...fullCircle1Vertices.slice(101, 101));
        } else {
            slice.push(...fullCircle1Vertices.slice(p_gamble1_p, 101));
        }
        Gamble1_red.vertices = slice;

        Gamble1_green.setAutoDraw(true);
        Gamble1_red.setAutoDraw(true);

        psychoJS.experiment.addData("p_gamble1_p", p_gamble1_p);
        psychoJS.experiment.addData("p_gamble1_r", p_gamble1_r);
      Begin Routine:
        p_gamble1_p = gambles[practice_trials.thisN][0]
        p_gamble1_r = gambles[practice_trials.thisN][1]

        gamble1_size = p_gamble1_r*pie_size

        Gamble1_green = visual.Pie(win, fillColor = 'Green', colorSpace = 'rgb',start = 0,end = 3.6*p_gamble1_p,pos=(-width,0), radius=gamble1_size)
        Gamble1_red = visual.Pie(win, fillColor = (-0.2,-0.2,-0.2), colorSpace = 'rgb',start = 3.6*p_gamble1_p,end = 360, pos=(-width,0), radius=gamble1_size)

        timer = core.CountdownTimer(start = time_gamble_show)

        thisExp.addData("p_gamble1_p", p_gamble1_p)
        thisExp.addData("p_gamble1_r", p_gamble1_r)

        #event.clearEvents()
      Each Frame:
        if timer.getTime()>0: # delay before previous routine + delay after showing the gamble
            Gamble1_green.draw()
            Gamble1_red.draw()
      End JS Routine:
        Gamble1_green.setAutoDraw(false);
        Gamble1_red.setAutoDraw(false);
    PolygonComponent p_fixation_cross
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent p_gamble1_rew_text
      letterHeight = 0.04
      pos = (-width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][1]
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    TextComponent p_gamble1_rew_text_low
      letterHeight = 0.025
      pos = (-width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][2]
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    TextComponent p_gamble1_prob_text
      letterHeight = 0.04
      pos = (-width, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][0]
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  Routine p_gamble2_show
    RoutineSettingsComponent p_gamble2_show
      stopVal [duration (s)] = $time_gamble_show
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    CodeComponent p_gamble2_code
      Code Type = Both
      Begin JS Routine:
        p_gamble2_p = p_gambles[practice_trials.thisN][2];
        p_gamble2_r = p_gambles[practice_trials.thisN][3];
        gamble2_size = (p_gamble2_r * pie_size);

        Gamble2_green = new visual.Polygon({win: psychoJS.window, fillColor: "Green", colorSpace: "rgb", edges: nedges, pos: [width, 0], radius: gamble2_size, lineWidth: 0});
        fullCircle2Vertices = Gamble2_green.vertices;
        fullCircle2Vertices.push(fullCircle2Vertices[0]);
        slice = [[0, 0]];
        slice.push(...fullCircle2Vertices.slice(0, p_gamble2_p+1));
        Gamble2_green.vertices = slice;
        Gamble2_red = new visual.Polygon({win: psychoJS.window, fillColor: [(-0.2), (-0.2), (-0.2)], colorSpace: "rgb", edges: nedges, pos: [width, 0], radius: gamble2_size, lineWidth: 0});
        slice = [[0, 0]];
        if (p_gamble2_r === reward[0]) {
            slice.push(...fullCircle2Vertices.slice(101, 101));
        } else {
            slice.push(...fullCircle2Vertices.slice(p_gamble2_p, 101));
        }
        Gamble2_red.vertices = slice;

        Gamble2_green.setAutoDraw(true);
        Gamble2_red.setAutoDraw(true);

        psychoJS.experiment.addData("p_gamble2_p", p_gamble2_p);
        psychoJS.experiment.addData("p_gamble2_r", p_gamble2_r);
      Begin Routine:
        p_gamble2_p = gambles[practice_trials.thisN][2]
        p_gamble2_r = gambles[practice_trials.thisN][3]

        gamble2_size = p_gamble2_r*pie_size

        Gamble2_green = visual.Pie(win, fillColor = 'Green', colorSpace = 'rgb',start = 0,end = 3.6*p_gamble2_p,pos=(width,0), radius=gamble2_size)
        Gamble2_red = visual.Pie(win, fillColor = (-0.2,-0.2,-0.2), colorSpace = 'rgb',start = 3.6*p_gamble2_p,end = 360, pos=(width,0), radius=gamble2_size)

        timer = core.CountdownTimer(time_gamble_show+time_gamble_delay)

        thisExp.addData("p_gamble2_p", p_gamble2_p)
        thisExp.addData("p_gamble2_r", p_gamble2_r)
      Each Frame:
        if timer.getTime()>time_gamble_delay:
            Gamble2_green.draw()
            Gamble2_red.draw()
      End JS Routine:
        Gamble2_green.setAutoDraw(false);
        Gamble2_red.setAutoDraw(false);
    PolygonComponent p_fixation_cross_2
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    TextComponent p_gamble2_rew_text
      letterHeight = 0.04
      pos = (width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][4]
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    TextComponent p_gamble2_rew_text_low
      letterHeight = 0.025
      pos = (width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][5]
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    TextComponent p_gamble2_prob_text
      letterHeight = 0.04
      pos = (width, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][3]
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  Routine p_gamble_choice
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    CodeComponent p_gamble_choice_code
      Code Type = Both
      Begin JS Routine:
        Gamble1_green.setAutoDraw(true);
        Gamble1_red.setAutoDraw(true);
        Gamble2_green.setAutoDraw(true);
        Gamble2_red.setAutoDraw(true);
      Each Frame:
        Gamble1_green.draw()
        Gamble1_red.draw()
        Gamble2_green.draw()
        Gamble2_red.draw()
      End JS Routine:
        Gamble1_green.setAutoDraw(false);
        Gamble1_red.setAutoDraw(false);
        Gamble2_green.setAutoDraw(false);
        Gamble2_red.setAutoDraw(false);
    PolygonComponent p_fixation_cross_3
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent p_gamble1_rew_text_2
      letterHeight = 0.04
      pos = (-width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][1]
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    TextComponent p_gamble1_rew_text_low_2
      letterHeight = 0.025
      pos = (-width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][2]
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    TextComponent p_gamble1_prob_text_2
      letterHeight = 0.04
      pos = (-width, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][0]
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    TextComponent p_gamble2_rew_text_2
      letterHeight = 0.04
      pos = (width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][4]
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    TextComponent p_gamble2_rew_text_low_2
      letterHeight = 0.025
      pos = (width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][5]
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    TextComponent p_gamble2_prob_text_2
      letterHeight = 0.04
      pos = (width, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $p_gambles_txt[practice_trials.thisN][3]
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    KeyboardComponent choice_prac
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Choose_text_p
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the corresponding arrow key to select a gamble.
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  Routine p_chosen_gamble
    RoutineSettingsComponent p_chosen_gamble
      stopVal [duration (s)] = $time_chosen_gamble
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    CodeComponent p_chosen_gamble_code
      Code Type = Both
      Begin JS Routine:
        p_inputs = psychoJS.eventManager.getKeys();
        p_userchoice = p_inputs.slice((- 1))[0];
        if ((p_userchoice === "left")) {
            choice_pos = (- width);
            rewa_txt = p_gambles_txt[practice_trials.thisN][1];
            rewa_txt_low = p_gambles_txt[practice_trials.thisN][2];
            prob_txt = p_gambles_txt[practice_trials.thisN][0];
            gamble_size = gamble1_size;
            choice = 0;
            Gamble1_green.setAutoDraw(true);
            Gamble1_red.setAutoDraw(true);
        } else {
            choice_pos = width;
            rewa_txt = p_gambles_txt[practice_trials.thisN][4];
            rewa_txt_low = p_gambles_txt[practice_trials.thisN][5];
            prob_txt = p_gambles_txt[practice_trials.thisN][3];
            gamble_size = gamble2_size;
            choice = 1;
            Gamble2_green.setAutoDraw(true);
            Gamble2_red.setAutoDraw(true);
        }
        console.log(rewa_txt)
        console.log(rewa_txt_low)
        psychoJS.experiment.addData("choice_prac", choice);
      Begin Routine:
        p_inputs = event.getKeys()
        p_userchoice = p_inputs[-1]

        if p_userchoice == 'left':
            choice_pos = -width
            rewa_txt = gambles_txt[practice_trials.thisN][1]
            prob_txt = gambles_txt[practice_trials.thisN][0]
            gamble_size = gamble1_size # Will be used for the outcome square size (next rountine)
            choice = 0
        else:
            choice_pos = width
            rewa_txt = gambles_txt[practice_trials.thisN][3]
            prob_txt = gambles_txt[practice_trials.thisN][2]
            gamble_size = gamble2_size # Will be used for the outcome square size (next rountine)
            choice= 1
        thisExp.addData('choice_prac', choice)
      Each Frame:
        if p_userchoice == 'left':
            Gamble1_green.draw()
            Gamble1_red.draw()
        else:
            Gamble2_green.draw()
            Gamble2_red.draw()
      End JS Routine:
        Gamble1_green.setAutoDraw(false);
        Gamble1_red.setAutoDraw(false);
        Gamble2_green.setAutoDraw(false);
        Gamble2_red.setAutoDraw(false);
    PolygonComponent fixation_5
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent p_chosen_reward_txt
      letterHeight = 0.04
      pos [set every repeat] = (choice_pos, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewa_txt
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    TextComponent p_chosen_reward_txt_low
      letterHeight = 0.025
      pos [set every repeat] = (choice_pos, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewa_txt_low
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    TextComponent p_chosen_prob_txt
      letterHeight = 0.04
      pos [set every repeat] = (choice_pos, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob_txt
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  Routine p_gamble_outcome
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    CodeComponent p_gamble_result_code
      Code Type = Both
      Begin Experiment:
        p_progVal = 1
      Begin JS Experiment:
        p_progVal = 1;
      Begin JS Routine:
        p_progBar = (p_progVal / (npractice_trials/3));
        p_progVal += 1;
        psychoJS.eventManager.clearEvents();

        if ((p_userchoice === "left")) {
            if ((p_gambles[practice_trials.thisN][0] >= p_gamble_result[practice_trials.thisN])) {
                p_current_money += p_gambles[practice_trials.thisN][1];
                outcome_txtW = "Win!";
                W_pos = 0.03;
                outcome_rewa = p_gambles_txt[practice_trials.thisN][1];
                outcome_rewaL_txt = p_gambles_txt[practice_trials.thisN][2];
                rewa_pos = (- 0.03);
                outcome_color = "Green";
                outcome = 1;
            } else {
                outcome_txtW = "Loss!";
                W_pos = 0;
                outcome_rewa = "";
                outcome_rewaL_txt = "";
                rewa_pos = (- 1.5);
                outcome_color = "Red";
                outcome = 0;
            }
        } else {
            if ((p_gambles[practice_trials.thisN][2] >= p_gamble_result[practice_trials.thisN])) {
                p_current_money += p_gambles[practice_trials.thisN][3];
                outcome_txtW = "Win!";
                W_pos = 0.03;
                outcome_rewa = p_gambles_txt[practice_trials.thisN][4];
                outcome_rewaL_txt = p_gambles_txt[practice_trials.thisN][5];
                rewa_pos = (- 0.03);
                outcome_color = "Green";
                outcome = 1;
            } else {
                outcome_txtW = "Loss!";
                W_pos = 0;
                outcome_rewa = "";
                outcome_rewaL_txt = "";
                rewa_pos = (- 1.5);
                outcome_color = "Red";
                outcome = 0;
            }
        }

        psychoJS.experiment.addData("current_money_prac", p_current_money);
        let p_money_txt = `$${p_current_money.toFixed(2)}`;
        psychoJS.experiment.addData("outcome_prac", outcome);
      Begin Routine:
        p_progBar = p_progVal/npractice_trials
        p_progVal += 1

        event.clearEvents()

        thisExp.addData('current_money_prac', current_money)

        if p_userchoice == 'left':
            if gambles[practice_trials.thisN][0] >= gamble_result[practice_trials.thisN]:
                current_money += gambles[practice_trials.thisN][1]
                outcome_txtW = 'Win!'
                W_pos = 0.03
                outcome_txtN = gambles_txt[practice_trials.thisN][1]
                N_pos = -0.03
                outcome_color = 'Green'
                outcome = 1
            else:
                outcome_txtW = 'Loss!'
                W_pos = 0
                outcome_txtN = ''
                N_pos = -1.5
                outcome_color = 'Red'
                outcome = 0
        else:
            if gambles[practice_trials.thisN][2] >= gamble_result[practice_trials.thisN]:
                current_money += gambles[practice_trials.thisN][3]
                outcome_txtW = 'Win!'
                W_pos = 0.03
                outcome_txtN = gambles_txt[practice_trials.thisN][3]
                N_pos = -0.03
                outcome_color = 'Green'
                outcome = 1
            else:
                outcome_txtW = 'Loss!'
                W_pos = 0
                outcome_txtN = ''
                N_pos = -1.5
                outcome_color = 'Red'
                outcome = 0
        p_money_txt = f"$ {current_money:.2f}"

        thisExp.addData("outcome_prac", outcome)
    PolygonComponent fixation_6
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent p_money_prompt
      letterHeight = 0.05
      pos = (-0.55, 0.4)
      startVal [time (s)] = 0.0
      text = Current total: 
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    TextComponent p_current_money_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.06
      pos = (-0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $p_money_txt
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    TextComponent practice_txt
      letterHeight = 0.05
      pos = (-0.55, 0.33)
      startVal [time (s)] = 0.0
      text = Practice
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    PolygonComponent p_outcome_square
      fillColor [set every repeat] = $outcome_color
      lineColor [set every repeat] = $outcome_color
      pos [set every repeat] = (choice_pos, 0)
      shape = rectangle
      size [set every repeat] = (2*gamble_size, 2*gamble_size)
      startVal [time (s)] = 0.0
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    TextComponent p_outcome_text
      letterHeight = 0.06
      pos [set every repeat] = (choice_pos, W_pos)
      startVal [time (s)] = 0.0
      text [set every repeat] = $outcome_txtW
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    TextComponent p_outcome_rewa_text
      letterHeight = 0.025
      pos [set every repeat] = (choice_pos, rewa_pos)
      startVal [time (s)] = 0.0
      text [set every repeat] = $outcome_rewa + '\n' + outcome_rewaL_txt
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    ProgressComponent p_prog_bar
      anchor = center-left
      fillColor = None
      lineWidth = 4
      pos = (-0.5, -0.45)
      progress [set every repeat] = p_progBar
      size = (1, 0.03)
      startVal [time (s)] = 0
      units = height
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    TextComponent p_next_trial_txt
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = time_gamble_result
      text = Press the <space bar> to initiate the next trial. 
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    KeyboardComponent p_next_trial_input
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = time_gamble_result
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  Routine iti
    RoutineSettingsComponent iti
      stopVal [duration (s)] = $time_iti
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine p_happiness_trial
    RoutineSettingsComponent p_happiness_trial
      skipIf = not (happyTrial_prac[practice_trials.thisN])
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    SliderComponent happiness_rating_prac
      forceEndRoutine = False
      granularity = 1
      labels = ('1', '2', '3', '4', '5', '6', '7', '8', '9', '10', '11', '12', '13', '14', '15', '16', '17', '18', '19', '20')
      letterHeight = 0.04
      size = (1.3, 0.05)
      startVal [time (s)] = 2.5
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    TextComponent low_end_text_4
      letterHeight = 0.05
      pos = (-0.5, -0.15)
      startVal [time (s)] = 2.5
      text = very unhappy
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    TextComponent high_end_text_4
      letterHeight = 0.05
      pos = (0.5, -0.15)
      startVal [time (s)] = 2.5
      text = very happy
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    TextComponent question_4
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How happy are you at this moment?
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    TextComponent exit_text_2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 2.5
      text = Press <enter> to move to the next trial
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    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 2.5
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    CodeComponent code_5
      Code Type = Both
      Each Frame:
        if happiness_rating_overall.getRating() != undefined  and events.getKeys() == "return" :
            continueRoutine = false
      Each JS Frame:
        KEYS_prac = psychoJS.eventManager.getKeys();
        userChoice_prac = KEYS_prac.slice((- 1))[0];
        if (((happiness_rating_prac.rating !== undefined) && (userChoice_prac === "return"))) {
            continueRoutine = false;
        }
  Routine repeat_practice
    RoutineSettingsComponent repeat_practice
      skipIf = (practice_trials.thisN+1)%(npractice_trials/3) != 0
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    TextComponent repeat_practice_txt
      letterHeight = 0.05
      startVal [time (s)] = $time_iti
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      text:
        You have now completed the practice trials.

        Press 'c' to continue to the main trials.

        Press 'r' to repeat the practice trials.
    KeyboardComponent key_resp_9
      allowedKeys = 'c', 'r'
      forceEndRoutine = True
      startVal [time (s)] = $time_iti
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    CodeComponent saveChoice_15
      Code Type = Auto->JS
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      End Routine:
        # For an unknown reason, psychopy routines do not skip the custom code part of a shipped rountine
        if (practice_trials.thisN +1) % (npractice_trials/3) == 0:
            keys = event.getKeys()
            Input = keys[-1]

            if Input == 'c' or (practice_trials.thisN +1) == npractice_trials:
                practice_trials.finished = True

        #elif userChoice == 'r':
        #    practice_trials.finished = False
        #print(event.getKeys)
        #print(userChoice)
        #print(userChoice == 'l')
  Routine instructions12
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    TextComponent instructions_text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have now completed the practice trials and will move on to the full task.

        Press <enter> to start
    KeyboardComponent key_resp_inst_10
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine gamble1_show
    RoutineSettingsComponent gamble1_show
      stopVal [duration (s)] = $time_gamble_show
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    CodeComponent gamble1_code
      Code Type = Both
      Begin JS Routine:
        let dateTime = new Date().toISOString().replace(/T/, '_').replace(/\..+/, '').replace(/:/g, '.');
        psychoJS.experiment.addData("dateTime", dateTime);

        gamble1_p = gambles[trials.thisN][0];
        gamble1_r = gambles[trials.thisN][1];
        gamble1_size = (gamble1_r * pie_size);

        Gamble1_green = new visual.Polygon({win: psychoJS.window, fillColor: "Green", colorSpace: "rgb", edges: nedges, pos: [(- width), 0], radius: gamble1_size, lineWidth: 0});
        fullCircle1Vertices = Gamble1_green.vertices;
        fullCircle1Vertices.push(fullCircle1Vertices[0]);
        slice = [[0, 0]];
        slice.push(...fullCircle1Vertices.slice(0, gamble1_p+1));
        Gamble1_green.vertices = slice;
        Gamble1_red = new visual.Polygon({win: psychoJS.window, fillColor: [(-0.2), (-0.2), (-0.2)], colorSpace: "rgb", edges: nedges, pos: [(- width), 0], radius: gamble1_size, lineWidth: 0});
        slice = [[0, 0]];
        if (gamble1_r === reward[0]) {
            slice.push(...fullCircle1Vertices.slice(101, 101));
        } else {
            slice.push(...fullCircle1Vertices.slice(gamble1_p, 101));
        }
        Gamble1_red.vertices = slice;

        Gamble1_green.setAutoDraw(true);
        Gamble1_red.setAutoDraw(true);

        psychoJS.experiment.addData("gamble1_p", gamble1_p);
        psychoJS.experiment.addData("gamble1_r", gamble1_r);
      Begin Routine:
        thisExp.addData("dateTime", time.strftime("%Y-%m-%d_%H.%M.%S"))

        gamble1_p = gambles[(trials.thisN+npractice_trials*3)][0]
        gamble1_r = gambles[(trials.thisN+npractice_trials*3)][1]

        gamble1_size = gamble1_r*pie_size

        Gamble1_green = visual.Pie(win, fillColor = 'Green', colorSpace = 'rgb',start = 0,end = 3.6*gamble1_p,pos=(-width,0), radius=gamble1_size)
        Gamble1_red = visual.Pie(win, fillColor = (-0.2,-0.2,-0.2), colorSpace = 'rgb',start = 3.6*gamble1_p,end = 360, pos=(-width,0), radius=gamble1_size)

        timer = core.CountdownTimer(start = time_gamble_show)

        thisExp.addData("gamble1_p", gamble1_p)
        thisExp.addData("gamble1_r", gamble1_r)
      Each Frame:
        if timer.getTime()>0: # delay before previous routine + delay after showing the gamble
            Gamble1_green.draw()
            Gamble1_red.draw()
      End JS Routine:
        Gamble1_green.setAutoDraw(false);
        Gamble1_red.setAutoDraw(false);
    PolygonComponent fixation_cross
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent gamble1_rew_text
      letterHeight = 0.04
      pos = (-width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0
      text [set every repeat] = $gambles_txt[trials.thisN][1]
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    TextComponent gamble1_rew_text_low
      letterHeight = 0.025
      pos = (-width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $gambles_txt[trials.thisN][2]
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    TextComponent gamble1_prob_text
      letterHeight = 0.04
      pos = (-width, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $gambles_txt[trials.thisN][0]
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  Routine gamble2_show
    RoutineSettingsComponent gamble2_show
      stopVal [duration (s)] = $time_gamble_show
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    CodeComponent gamble2_code
      Code Type = Both
      Begin JS Routine:
        gamble2_p = gambles[trials.thisN][2];
        gamble2_r = gambles[trials.thisN][3];
        gamble2_size = (gamble2_r * pie_size);


        Gamble2_green = new visual.Polygon({win: psychoJS.window, fillColor: "Green", colorSpace: "rgb", edges: nedges, pos: [width, 0], radius: gamble2_size, lineWidth: 0});
        fullCircle2Vertices = Gamble2_green.vertices;
        fullCircle2Vertices.push(fullCircle2Vertices[0]);
        slice = [[0, 0]];
        slice.push(...fullCircle2Vertices.slice(0, gamble2_p+1));
        Gamble2_green.vertices = slice;
        Gamble2_red = new visual.Polygon({win: psychoJS.window, fillColor: [(-0.2), (-0.2), (-0.2)], colorSpace: "rgb", edges: nedges, pos: [width, 0], radius: gamble2_size, lineWidth: 0});
        slice = [[0, 0]];
        if (gamble2_r === reward[0]) {
            slice.push(...fullCircle2Vertices.slice(101, 101));
        } else {
            slice.push(...fullCircle2Vertices.slice(gamble2_p, 101));
        }
        Gamble2_red.vertices = slice;

        Gamble2_green.setAutoDraw(true);
        Gamble2_red.setAutoDraw(true);

        psychoJS.experiment.addData("gamble2_p", gamble2_p);
        psychoJS.experiment.addData("gamble2_r", gamble2_r);
      Begin Routine:
        gamble2_p = gambles[(trials.thisN+npractice_trials*3)][2]
        gamble2_r = gambles[(trials.thisN+npractice_trials*3)][3]

        gamble2_size = gamble2_r*pie_size

        Gamble2_green = visual.Pie(win, fillColor = 'Green', colorSpace = 'rgb',start = 0,end = 3.6*gamble2_p,pos=(width,0), radius=gamble2_size)
        Gamble2_red = visual.Pie(win, fillColor = (-0.2,-0.2,-0.2), colorSpace = 'rgb',start = 3.6*gamble2_p,end = 360, pos=(width,0), radius=gamble2_size)

        timer = core.CountdownTimer(time_gamble_show+time_gamble_delay)

        thisExp.addData("gamble2_p", gamble2_p)
        thisExp.addData("gamble2_r", gamble2_r)
      Each Frame:
        if timer.getTime()>time_gamble_delay:
            Gamble2_green.draw()
            Gamble2_red.draw()
      End JS Routine:
        Gamble2_green.setAutoDraw(false);
        Gamble2_red.setAutoDraw(false);
    PolygonComponent fixation_cross_2
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
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    TextComponent gamble2_rew_text
      letterHeight = 0.04
      pos = (width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0
      text [set every repeat] = $gambles_txt[trials.thisN][4]
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    TextComponent gamble2_rew_text_low
      letterHeight = 0.025
      pos = (width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $gambles_txt[trials.thisN][5]
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    TextComponent gamble2_prob_text
      letterHeight = 0.04
      pos = (width, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $gambles_txt[trials.thisN][3]
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  Routine gamble_choice
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    CodeComponent gamble_choice_code
      Code Type = Both
      Begin JS Routine:
        Gamble1_green.setAutoDraw(true);
        Gamble1_red.setAutoDraw(true);
        Gamble2_green.setAutoDraw(true);
        Gamble2_red.setAutoDraw(true);
      Each Frame:
        Gamble1_green.draw()
        Gamble1_red.draw()
        Gamble2_green.draw()
        Gamble2_red.draw()
      End JS Routine:
        Gamble1_green.setAutoDraw(false);
        Gamble1_red.setAutoDraw(false);
        Gamble2_green.setAutoDraw(false);
        Gamble2_red.setAutoDraw(false);
    PolygonComponent fixation_cross_3
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent gamble1_rew_test_2
      letterHeight = 0.04
      pos = (-width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $gambles_txt[trials.thisN][1]
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    TextComponent gamble1_rew_text_low_2
      letterHeight = 0.025
      pos = (-width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $gambles_txt[trials.thisN][2]
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    TextComponent gamble1_prob_text_2
      letterHeight = 0.04
      pos = (-width, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $gambles_txt[trials.thisN][0]
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    TextComponent gamble2_rew_text_2
      letterHeight = 0.04
      pos = (width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $gambles_txt[trials.thisN][4]
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    TextComponent gamble2_rew_text_low_2
      letterHeight = 0.025
      pos = (width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $gambles_txt[trials.thisN][5]
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    TextComponent gamble2_prob_text_2
      letterHeight = 0.04
      pos = (width, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $gambles_txt[trials.thisN][3]
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    KeyboardComponent gamblechoice
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Choose_text
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the corresponding arrow key to select a gamble.
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  Routine chosen_gamble
    RoutineSettingsComponent chosen_gamble
      stopVal [duration (s)] = $time_chosen_gamble
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    CodeComponent chosen_gamble_code
      Code Type = Both
      Begin JS Routine:
        inputs = psychoJS.eventManager.getKeys();
        userchoice = inputs.slice((- 1))[0];
        if ((userchoice === "left")) {
            Gamble1_green.setAutoDraw(true);
            Gamble1_red.setAutoDraw(true);
            choice_pos = (- width);
            rewa_txt = gambles_txt[trials.thisN][1];
            rewa_txt_low = gambles_txt[trials.thisN][2];
            prob_txt = gambles_txt[trials.thisN][0];
            gamble_size = gamble1_size;
            choice = 0;
        } else {
            Gamble2_green.setAutoDraw(true);
            Gamble2_red.setAutoDraw(true);
            choice_pos = width;
            rewa_txt = gambles_txt[trials.thisN][4];
            rewa_txt_low = gambles_txt[trials.thisN][5];
            prob_txt = gambles_txt[trials.thisN][3];
            gamble_size = gamble2_size;
            choice = 1;
        }
        psychoJS.experiment.addData("choice", choice);
      Begin Routine:
        inputs = event.getKeys()
        userchoice = inputs[-1]
        # the two preceding lines of code do not function properly on a M4 macbook

        rightn = trials.thisN + (npractice_trials*3)
        if userchoice == 'left':
            choice_pos = -width
            rewa_txt = gambles_txt[rightn][1]
            prob_txt = gambles_txt[rightn][0]
            gamble_size = gamble1_size # Will be used for the outcome square size (next rountine)
            choice = 0
        else:
            choice_pos = width
            rewa_txt = gambles_txt[rightn][3]
            prob_txt = gambles_txt[rightn][2]
            gamble_size = gamble2_size # Will be used for the outcome square size (next rountine)
            choice = 1
        thisExp.addData('choice', choice)
      Each Frame:
        if userchoice == 'left':
            Gamble1_green.draw()
            Gamble1_red.draw()
        else:
            Gamble2_green.draw()
            Gamble2_red.draw()
      End JS Routine:
        Gamble1_green.setAutoDraw(false);
        Gamble1_red.setAutoDraw(false);
        Gamble2_green.setAutoDraw(false);
        Gamble2_red.setAutoDraw(false);
    PolygonComponent fixation_7
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent chosen_reward_txt
      letterHeight = 0.04
      pos [set every repeat] = (choice_pos, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewa_txt
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    TextComponent chosen_reward_txt_low
      letterHeight = 0.025
      pos [set every repeat] = (choice_pos, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rewa_txt_low
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    TextComponent chosen_prob_txt
      letterHeight = 0.04
      pos [set every repeat] = (choice_pos, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob_txt
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  Routine gamble_outcome
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    CodeComponent gamble_result_code
      Code Type = Both
      Begin Experiment:
        progVal = 1
      Begin JS Experiment:
        progVal = 1;
      Begin JS Routine:
        progBar = (progVal / ntrials);
        progVal += 1;
        psychoJS.eventManager.clearEvents();
        if ((userchoice === "left")) {
            if ((gambles[trials.thisN][0] >= gamble_result[trials.thisN])) {
                current_money += gambles[trials.thisN][1];
                outcome_txtW = "Win!";
                W_pos = 0.03;
                outcome_rewa = gambles_txt[trials.thisN][1];
                outcome_rewaL_txt = gambles_txt[trials.thisN][2];
                rewa_pos = (- 0.03);
                outcome_color = "Green";
                outcome = 1;
            } else {
                outcome_txtW = "Loss!";
                W_pos = 0;
                outcome_rewa = "";
                outcome_rewaL_txt = "";
                rewa_pos = (- 1.5);
                outcome_color = "Red";
                outcome = 0;
            }
        } else {
            if ((gambles[trials.thisN][2] >= gamble_result[trials.thisN])) {
                current_money += gambles[trials.thisN][3];
                outcome_txtW = "Win!";
                W_pos = 0.03;
                outcome_rewa = gambles_txt[trials.thisN][4];
                outcome_rewaL_txt = gambles_txt[trials.thisN][5];
                rewa_pos = (- 0.03);
                outcome_color = "Green";
                outcome = 1;
            } else {
                outcome_txtW = "Loss!";
                W_pos = 0;
                outcome_rewa = "";
                outcome_rewaL_txt = "";
                rewa_pos = (- 1.5);
                outcome_color = "Red";
                outcome = 0;
            }
        }
        let money_txt = `$${current_money.toFixed(2)}`;
        psychoJS.experiment.addData("current_money", current_money);
        psychoJS.experiment.addData("outcome", outcome);
      Begin Routine:
        progBar = progVal/ntrials
        progVal += 1

        event.clearEvents()

        if userchoice == 'left':
            if gambles[trials.thisN][0] >= gamble_result[trials.thisN]:
                current_money += gambles[trials.thisN][1]
                outcome_txtW = 'Win!'
                W_pos = 0.03
                outcome_txtN = gambles_txt[trials.thisN][1]
                N_pos = -0.03
                outcome_color = 'Green'
                outcome = 1
            else:
                outcome_txtW = 'Loss!'
                W_pos = 0
                outcome_txtN = ''
                N_pos = -1.5
                outcome_color = 'Red'
                outcome = 0
        else:
            if gambles[trials.thisN][2] >= gamble_result[trials.thisN]:
                current_money += gambles[trials.thisN][3]
                outcome_txtW = 'Win!'
                W_pos = 0.03
                outcome_txtN = gambles_txt[trials.thisN][3]
                N_pos = -0.03
                outcome_color = 'Green'
                outcome = 1
            else:
                outcome_txtW = 'Loss!'
                W_pos = 0
                outcome_txtN = ''
                N_pos = -1.5
                outcome_color = 'Red'
                outcome = 0
        thisExp.addData('current_money', current_money)
        thisExp.addData("outcome", outcome)
    PolygonComponent fixation_8
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent money_prompt
      letterHeight = 0.05
      pos = (-0.55, 0.4)
      startVal [time (s)] = 0.0
      text = Current total: 
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    TextComponent current_money_txt
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.06
      pos = (-0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $money_txt
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    PolygonComponent outcome_square
      fillColor [set every repeat] = $outcome_color
      lineColor [set every repeat] = $outcome_color
      pos [set every repeat] = (choice_pos, 0)
      shape = rectangle
      size [set every repeat] = (2*gamble_size, 2*gamble_size)
      startVal [time (s)] = 0.0
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    TextComponent outcome_text_3
      letterHeight = 0.06
      pos [set every repeat] = (choice_pos, W_pos)
      startVal [time (s)] = 0.0
      text [set every repeat] = $outcome_txtW
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    TextComponent outcome_text_2
      letterHeight = 0.025
      pos [set every repeat] = (choice_pos, rewa_pos)
      startVal [time (s)] = 0.0
      text [set every repeat] = $outcome_rewa + '\n' + outcome_rewaL_txt
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    ProgressComponent prog_bar
      anchor = center-left
      fillColor = None
      lineWidth = 4
      pos = (-0.5, -0.45)
      progress [set every repeat] = progBar
      size = (1, 0.03)
      startVal [time (s)] = 0
      units = height
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    TextComponent next_trial_txt
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = time_gamble_result
      text = Press the <space bar> to initiate the next trial.
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    KeyboardComponent next_trial_input
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = time_gamble_result
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  Routine happiness_trial
    RoutineSettingsComponent happiness_trial
      skipIf = not (happyTrial[trials.thisN])
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    SliderComponent happiness_rating
      forceEndRoutine = False
      granularity = 1
      labels = ('1', '2', '3', '4', '5', '6', '7', '8', '9', '10', '11', '12', '13', '14', '15', '16', '17', '18', '19', '20')
      letterHeight = 0.04
      size = (1.3, 0.05)
      startVal [time (s)] = 2.5
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    TextComponent low_end_text_2
      letterHeight = 0.05
      pos = (-0.5, -0.15)
      startVal [time (s)] = 2.5
      text = very unhappy
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    TextComponent high_end_text_2
      letterHeight = 0.05
      pos = (0.5, -0.15)
      startVal [time (s)] = 2.5
      text = very happy
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    TextComponent question_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How happy are you at this moment?
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    TextComponent exit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 2.5
      text = Press <enter> to move to the next trial
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    KeyboardComponent key_resp_6
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 2.5
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    CodeComponent code_8
      Code Type = Both
      Each Frame:
        if happiness_rating_overall.getRating() != undefined  and events.getKeys() == "return" :
            continueRoutine = false
      Each JS Frame:
        KEYS = psychoJS.eventManager.getKeys();
        userChoice = KEYS.slice((- 1))[0];
        if (((happiness_rating.rating !== undefined) && (userChoice === "return"))) {
            continueRoutine = false;
        }
  Routine trial_break
    RoutineSettingsComponent trial_break
      forceNonSlip = True
      skipIf = (trials.thisN % 37 != 0) | (trials.thisN != 148)
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    TextComponent break_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Break

        Press <enter> when you are ready to resume
    KeyboardComponent key_resp_10
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Thank_you
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    TextComponent thankYouText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the task. Thank you for your participation!

        Please do not close your browser until the screen says to do so.

        The page should automatically redirect you to Prolific once you exit the experiment. In case there is an error, please note the following completion code: C1D29EVY.

        (Press enter to exit the experiment)
    KeyboardComponent key_resp_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 3
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
  Routine instructions_t2_chosen_gamble
    RoutineSettingsComponent instructions_t2_chosen_gamble
      stopVal [duration (s)] = $time_chosen_gamble
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    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        Gamble2_green.setAutoDraw(true);
        Gamble2_red.setAutoDraw(true);
      Each Frame:
        Gamble2_green.draw()
        Gamble2_red.draw()
      End JS Routine:
        Gamble2_green.setAutoDraw(false);
        Gamble2_red.setAutoDraw(false);
    PolygonComponent fixation_inst_5a_3
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent gamble1_txt_inst_5a_4
      letterHeight = 0.04
      pos = (width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text = MEDIUM
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    TextComponent gamble2_txt_inst_5a_low_3
      letterHeight = 0.025
      pos = (width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text = (\$0.04)
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    TextComponent gamble1_prob_inst_5a_4
      letterHeight = 0.04
      pos = (width, 0)
      startVal [time (s)] = 0.0
      text = 95%
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  Routine instructions_t1_chosen_gamble
    RoutineSettingsComponent instructions_t1_chosen_gamble
      stopVal [duration (s)] = $time_chosen_gamble
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        Gamble1_green.setAutoDraw(true);
        Gamble1_red.setAutoDraw(true);
      Each Frame:
        Gamble1_green.draw()
        Gamble1_red.draw()
      End JS Routine:
        Gamble1_green.setAutoDraw(false);
        Gamble1_red.setAutoDraw(false);
    PolygonComponent fixation_inst_5a_2
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent gamble1_txt_inst_5a_2
      letterHeight = 0.04
      pos = (-width, reward[2]+rew_txt_margin+0.03)
      startVal [time (s)] = 0.0
      text = BIG
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    TextComponent gamble1_txt_inst_5a_low_2
      letterHeight = 0.025
      pos = (-width, reward[2]+rew_txt_margin)
      startVal [time (s)] = 0.0
      text = (\$0.06)
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    TextComponent gamble1_prob_inst_5a_2
      letterHeight = 0.04
      pos = (-width, 0)
      startVal [time (s)] = 0.0
      text = 70%
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  Routine instructions_t2_outcome
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    TextComponent total_prompt_inst_5a_2
      letterHeight = 0.05
      pos = (-0.55, 0.4)
      startVal [time (s)] = 0.0
      text = Current total: 
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    TextComponent curr_total_inst_5a_2
      color = 1.0000, 0.6863, -1.0000
      letterHeight = 0.06
      pos = (-0.3, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = \$5.10
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    PolygonComponent fixation_inst_5a_5
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent p_outcome_square_3
      fillColor [set every repeat] = green
      lineColor [set every repeat] = green
      pos [set every repeat] = (width, 0)
      shape = rectangle
      size [set every repeat] = (reward[1]*pie_size*2, reward[1]*pie_size*2)
      startVal [time (s)] = 0.0
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    TextComponent intro_outcome_text_3
      letterHeight = 0.06
      pos = (width, 0.03)
      startVal [time (s)] = 0.0
      text = Win!
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    TextComponent intro_outcome_text_4
      letterHeight = 0.03
      pos = (width, -0.03)
      startVal [time (s)] = 0.0
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      text:
        MEDIUM
        (\$0.04)
    TextComponent intro_next_trial_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = time_gamble_result
      text = Press the <space bar> to continue
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    KeyboardComponent intro_next_trial_input
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = time_gamble_result
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  Routine intro_iti
    RoutineSettingsComponent intro_iti
      stopVal [duration (s)] = $time_iti
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine repeat_iti
    RoutineSettingsComponent repeat_iti
      skipIf = (practice_trials.thisN+1)%(npractice_trials/3) != 0
      stopVal [duration (s)] = $time_iti
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine repeat_iti_2
    RoutineSettingsComponent repeat_iti_2
      skipIf = (trials.thisN % 37 != 0) | (trials.thisN != 148)
      stopVal [duration (s)] = $time_iti
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine p_h_iti
    RoutineSettingsComponent p_h_iti
      forceNonSlip = True
      skipIf = not (happyTrial_prac[practice_trials.thisN])
      stopVal [duration (s)] = $time_iti
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine h_iti
    RoutineSettingsComponent h_iti
      skipIf = not (happyTrial[trials.thisN])
      stopVal [duration (s)] = $time_iti
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine gamble_show_iti
    RoutineSettingsComponent gamble_show_iti
      stopVal [duration (s)] = $time_gamble_delay
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    PolygonComponent p_fixation_cross_4
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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  Routine consent
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    TextComponent text_9
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is an academic research project conducted through the University of Pennsylvania. In this Happiness Task, you will play a decision making game. In this game, you will make decisions about two options presented before you. The task takes ~35 minutes. You must be at least 18 years old to participate. Your participation in this research is voluntary, which means you can choose whether or not to participate without adverse consequences. Your anonymity is assured: the researchers who have requested your participation will not receive any personal information about you except your worker ID, gender, and age. The worker IDs will not be shared with anyone outside the research team nor associated with the collected data. The de-identified data may be stored and distributed for future research studies without additional informed consent. If you have questions about this research, please contact Nicole Rust by emailing nrust@psych.upenn.edu. If you have questions, concerns, or complaints regarding your participation in this research study, or if you have any questions about your rights as a research subject and you cannot reach a member of the study team, you may contact the Office of Regulatory Affairs at the University of Pennsylvania by calling (215) 898-2614 or emailing irb@pobox.upenn.edu.

        By clicking this box below you acknowledge that you have read the above details and consent to participate in this study.
    ButtonComponent button
      bold = True
      fillColor = green
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0, -0.45)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text = I agree
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  Routine happy_overall
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    TextComponent question_3
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Taken together, how happy are you right now overall? 
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    SliderComponent happiness_rating_overall
      forceEndRoutine = False
      granularity = 1
      labels = ('1', '2', '3', '4', '5', '6', '7', '8', '9', '10', '11', '12', '13', '14', '15', '16', '17', '18', '19', '20')
      letterHeight = 0.04
      size = (1.3, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    TextComponent low_end_text_3
      letterHeight = 0.05
      pos = (-0.5, -0.15)
      startVal [time (s)] = 0
      text = very unhappy
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    TextComponent high_end_text_3
      letterHeight = 0.05
      pos = (0.5, -0.15)
      startVal [time (s)] = 0
      text = very happy
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    KeyboardComponent key_resp_7
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0
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    TextComponent exit_text_4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      text = Click to enter your answer. Press <enter> to move to the next screen.
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    CodeComponent code_4
      Code Type = Both
      Each Frame:
        if happiness_rating_overall.getRating() != undefined  and events.getKeys() == "return" :
            continueRoutine = false
      Each JS Frame:
        KEYS_overa = psychoJS.eventManager.getKeys();
        userChoice_overa = KEYS_overa.slice((- 1))[0];
        if (((happiness_rating_overall.rating !== undefined) && (userChoice_overa === "return"))) {
            continueRoutine = false;
        }
  Routine happy_base
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    SliderComponent happiness_rating_baseline
      forceEndRoutine = False
      granularity = 1
      labels = ('1', '2', '3', '4', '5', '6', '7', '8', '9', '10', '11', '12', '13', '14', '15', '16', '17', '18', '19', '20')
      letterHeight = 0.04
      size = (1.3, 0.05)
      startVal [time (s)] = 2.5
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    TextComponent low_end_text_5
      letterHeight = 0.05
      pos = (-0.5, -0.15)
      startVal [time (s)] = 2.5
      text = very unhappy
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    TextComponent high_end_text_5
      letterHeight = 0.05
      pos = (0.5, -0.15)
      startVal [time (s)] = 2.5
      text = very happy
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    TextComponent question_5
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How happy are you at this moment?
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    TextComponent exit_text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 2.5
      text = Click to select your answer. Press <enter> to continue to the next screen.
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    KeyboardComponent key_resp_8
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 2.5
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    CodeComponent code
      Code Type = Both
      Each Frame:
        if happiness_rating_overall.getRating() != undefined  and events.getKeys() == "return" :
            continueRoutine = false
      Each JS Frame:
        KEYS_base = psychoJS.eventManager.getKeys();
        userChoice_base = KEYS_base.slice((- 1))[0];
        if (((happiness_rating_baseline.rating !== undefined) && (userChoice_base === "return"))) {
            continueRoutine = false;
        }
  Routine instructions10_2
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    TextComponent instructions_text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = It would be best to complete the entire task with minimal breaks. If you need to take a break, please do so on the break screen.
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    TextComponent Continue_txt_6
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine consent
  LoopInitiator Intros loopType="TrialHandler"
    conditionsFile = Introtext.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Intro_text': 'Welcome to the reward and subjective well-being task!\n\nIn this experiment, you will have the opportunity to earn money by playing a gambling task. You will also be asked to rate your happiness at various points as you progress through the task.'},
      {'Intro_text': 'In the next few steps, we will guide you through the task and how it works, you will then do a minimum of 10 practice trials, and finally you will start the task.'},
      {'Intro_text': 'On each trial, you will have the opportunity to earn money. You will be presented with two options, both options will be gambles. Each gamble probability will be indicated by the proportion of the pie that is colored green, each gamble reward size will be indicated by the size of the pie. The probabilities will also be displayed as text. Each gamble has two possible outcomes: either you win and gain the indicated reward, either you lose and earn $0. '},
      {'Intro_text': 'The gamble outcome rewards are BIG or MEDIUM, although a proportion of the gambles will have a SMALL reward with a certain (100%) probability.\nYou will begin the task with $5. The outcome of the choices you make from then on will count for ADDITIONAL money.\nPlease select your gamble choice by pressing the LEFT or RIGHT arrow keys. Once you’ve made your choice the outcome will be applied to your total. \nOn the next screen, you will do a few introductory trials.'}]
    Routine instructions1
  LoopTerminator Intros
  Routine instructions_t1_target_on_choice
  Routine instructions_t1_chosen_gamble
  Routine instructions_t1_outcome
  Routine intro_iti
  Routine instructions_t2_target_on_choice
  Routine instructions_t2_chosen_gamble
  Routine instructions_t2_outcome
  Routine instructions6
  Routine instructions7
  Routine instructions8
  Routine happy_overall
  Routine instructions10
  Routine happy_base
  Routine instructions10_2
  Routine instructions11
  Routine first_delay
  LoopInitiator practice_trials loopType="TrialHandler"
    loopType = sequential
    nReps = npractice_trials*3
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    conditions:
      [{'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
      {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
      {'sureBet_val': -2, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75},
      {'sureBet_val': -1, 'gamble1_val': 0, 'gamble2_val': 3, 'g1_prob': 0.1},
      {'sureBet_val': 3, 'gamble1_val': -100, 'gamble2_val': -100, 'g1_prob': -100},
      {'sureBet_val': -100, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
      {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
      {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
      {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
      {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75},
      {'sureBet_val': 3, 'gamble1_val': -100, 'gamble2_val': -100, 'g1_prob': -100},
      {'sureBet_val': -2, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75},
      {'sureBet_val': -100, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
      {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
      {'sureBet_val': -1, 'gamble1_val': 0, 'gamble2_val': 3, 'g1_prob': 0.1},
      {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
      {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
      {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75},
      {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
      {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5}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
    Routine p_gamble1_show
    Routine gamble_show_iti
    Routine p_gamble2_show
    Routine gamble_show_iti
    Routine p_gamble_choice
    Routine p_chosen_gamble
    Routine p_gamble_outcome
    Routine iti
    Routine p_happiness_trial
    Routine p_h_iti
    Routine repeat_practice
    Routine repeat_iti
  LoopTerminator practice_trials
  Routine instructions12
  Routine first_delay
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = ntrials
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    conditions:
      [{'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
      {'sureBet_val': 2, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
      {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
      {'sureBet_val': 0, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
      {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
      {'sureBet_val': 2, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
      {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
      {'sureBet_val': 0, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
      {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.75},
      {'sureBet_val': 2, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.75},
      {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.75},
      {'sureBet_val': 0, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.75},
      {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
      {'sureBet_val': -2, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
      {'sureBet_val': -1, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
      {'sureBet_val': 0, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
      {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.5},
      {'sureBet_val': -2, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.5},
      {'sureBet_val': -1, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.5},
      {'sureBet_val': 0, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.5},
      {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75}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
    Routine gamble1_show
    Routine gamble_show_iti
    Routine gamble2_show
    Routine gamble_show_iti
    Routine gamble_choice
    Routine chosen_gamble
    Routine gamble_outcome
    Routine iti
    Routine happiness_trial
    Routine h_iti
    Routine trial_break
    Routine repeat_iti_2
  LoopTerminator trials
  Routine Thank_you
