PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=C11KEBP2
  Data filename = u'data/%s_%s_%s' % (expInfo['PROLIFIC_PID'], expName, expInfo['date'])
  Experiment info = {'PROLIFIC_PID': '', 'STUDY_ID': '', 'SESSION_ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[0.3,0.3,0.3]
  expName = Mood4
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine instructions1
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    TextComponent Intro_text_show
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $Intro_text
      wrapWidth = 1.4
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    TextComponent Continue_txt
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0
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  Routine instructions_t1_target_on_choice
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    PolygonComponent fixation_inst_5a
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent intro_sure
      fillColor = white
      pos = (-width, 0)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent intro_sure_txt
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (-width, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(intro_sure_mag)
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    PolygonComponent intro_gambletop
      fillColor = white
      pos = (width, height)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent intro_gambletop_txt
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (width, height)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(intro_gamble_mag)
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    TextComponent intro_gambletop_p
      color = black
      letterHeight = 0.04
      pos [set every repeat] = (width+0.2, height)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{0.80*100:.0f}%"
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    PolygonComponent intro_gamblelow
      fillColor = white
      pos = (width, -height)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent intro_gamblelow_txt
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (width, -height)
      startVal [time (s)] = 0.0
      text = $f"${0:.2f}"
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    TextComponent intro_gamblelow_p
      color = black
      letterHeight = 0.04
      pos [set every repeat] = (width+0.2, -height)
      startVal [time (s)] = 0.0
      text = 20%
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    TextComponent Input_txt
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'Press the <left arrow key> to select the {mag(intro_sure_mag)}'
      wrapWidth = 1.4
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    TextComponent Guide_txt
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'On this trial, you can choose either a guaranteed {mag(intro_sure_mag)} reward or an 80% chance to win {mag(intro_gamble_mag)}.'
      wrapWidth = 1.4
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    KeyboardComponent choice_inst_5a
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_t1_outcome
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    TextComponent total_prompt_inst_5a
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Current total: ${5.50+intro_sure_mag:.2f}"
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    PolygonComponent p_outcome_square_2
      fillColor [set every repeat] = green
      lineColor [set every repeat] = green
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (1.5*option_size, 1.5*option_size)
      startVal [time (s)] = 0.0
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    TextComponent intro_outcome_text_5
      color = black
      letterHeight = 0.06
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = Win!
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    TextComponent intro_outcome_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(intro_sure_mag)
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    TextComponent intro_next_trial_txt_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = time_gamble_result
      text = Press the <space bar> to do another introductory trial
      wrapWidth = 1.4
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    KeyboardComponent intro_next_trial_input_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = time_gamble_result
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  Routine instructions_t2_target_on_choice
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    PolygonComponent fixation_inst_5b
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent intro_sure_3
      fillColor = white
      pos = (-width, 0)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent intro_gambletop_2
      fillColor = white
      pos = (width, height)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent intro_gamblelow_2
      fillColor = white
      pos = (width, -height)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent intro_sure_txt_3
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (-width, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(intro_sure_mag2)
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    TextComponent intro_gambletop_txt_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (width, height)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(intro_gamble_mag2)
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    TextComponent intro_gambletop_p_2
      color = black
      letterHeight = 0.04
      pos [set every repeat] = (width+0.2, height)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{85:.0f}%"
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    TextComponent intro_gamblelow_txt_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (width, -height)
      startVal [time (s)] = 0.0
      text = $f"${0:.2f}"
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    TextComponent intro_gamblelow_p_2
      color = black
      letterHeight = 0.04
      pos [set every repeat] = (width+0.2, -height)
      startVal [time (s)] = 0.0
      text = 15%
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    TextComponent input_txt_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the <right arrow key> to select the gamble
      wrapWidth = 1.4
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    TextComponent Guide_txt_2
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'On this trial, you can choose either a guaranteed {mag(intro_sure_mag2)} reward or an 85% chance to win {mag(intro_gamble_mag2)}.'
      wrapWidth = 1.4
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    KeyboardComponent choice_inst_5b
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine instructions6
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    TextComponent instructions_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        While the reward amounts are small, you will complete about 200 trials, and these amounts will quickly add up.

        On the outcome screen, your total earnings will appear at the top, and a progress bar at the bottom will show how far along you are in the task.

        The next screen will show you an example.
    TextComponent Continue_txt_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions7
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    TextComponent total_prompt_inst_5a_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = $f"Current total: ${8.5:.2f}"
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    PolygonComponent fixation_inst_5a_6
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    ProgressComponent prog_5
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.5, -0.45)
      progress = 0.55
      size = (1, 0.03)
      startVal [time (s)] = 0
      units = height
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    PolygonComponent p_outcome_square_4
      fillColor [set every repeat] = green
      lineColor [set every repeat] = green
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (1.5*option_size, 1.5*option_size)
      startVal [time (s)] = 0.0
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    TextComponent intro_outcome_text_4
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Win!
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    TextComponent instrutions_text
      color = blue
      letterHeight = 0.04
      pos = (0.48, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 0.55
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      text:
        This is an example outcome screen for a win, also showing your current total and the progress bar (about half way through the session).

        Press <enter> to continue
    PolygonComponent arrow1
      fillColor = blue
      lineColor = blue
      ori = -50
      pos = (0.17, 0.3)
      shape = arrow
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow2
      fillColor = blue
      lineColor = blue
      ori = -150
      pos = (0.2, -0.3)
      shape = arrow
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_progress_2
      fillColor = white
      pos = (-0.5, -0.45)
      shape = rectangle
      size = (0.004, 0.04)
      startVal [time (s)] = 0.0
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    PolygonComponent right_progress_2
      fillColor = white
      pos = (0.5, -0.45)
      shape = rectangle
      size = (0.004, 0.04)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_inst_6
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions8
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    TextComponent instructions_text_3
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = At various points throughout the task you will be asked to rate your happiness. When you are asked to make a happiness rating, click a number 1-20 to reflect your rating from 1 (very unhappy) to 20 (very happy). 
      wrapWidth = 1.4
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    TextComponent Continue_txt_3
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_7
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions10
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    TextComponent instructions_text_6
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Just now, you were asked to think about your life overall. Now, think about just right now. How happy are you at this moment?

        During the task you will be asked this question many times. It is VERY important that you use as much of the rating scale as you can.

        In a moment you will complete some practice trials. The least happy you remember being during the practice session should correspond to somewhere in the lower half of the rating scale. The most happy you remember being should correspond to somewhere in the upper half.
    TextComponent Continue_txt_4
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_8
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions11
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    TextComponent instructions_text_7
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = You will now complete 10 practice trials. Try to remember the least and most happy you feel during the practice trials to guide your happiness ratings throughout the task.
      wrapWidth = 1.4
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    TextComponent Continue_txt_5
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_9
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_delay
    RoutineSettingsComponent first_delay
      stopVal [duration (s)] = $time_first_delay
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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
  Routine iti
    RoutineSettingsComponent iti
      stopVal [duration (s)] = $time_iti
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine p_happiness_trial
    RoutineSettingsComponent p_happiness_trial
      skipIf = not (happyTrial_prac[practice_trials.thisN])
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    SliderComponent happiness_rating_prac
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = ('1', '2', '3', '4', '5', '6', '7', '8', '9', '10', '11', '12', '13', '14', '15', '16', '17', '18', '19', '20')
      letterHeight = 0.04
      size = (1.3, 0.05)
      startVal [time (s)] = 2.5
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    TextComponent low_end_text_4
      color = black
      letterHeight = 0.04
      pos = (-0.65, 0.07)
      startVal [time (s)] = 2.5
      text = very unhappy
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    TextComponent high_end_text_4
      color = black
      letterHeight = 0.04
      pos = (0.65, 0.07)
      startVal [time (s)] = 2.5
      text = very happy
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    TextComponent question_4
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How happy are you at this moment?
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    TextComponent exit_text_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 2.5
      text = Press <enter> to move to the next trial
      wrapWidth = 1.4
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    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 2.5
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    CodeComponent code_5
      Code Type = Both
      Each Frame:
        responses = event.getKeys()
        if happiness_rating_prac.getRating() != None and len(responses)>0 and responses[-1] == "return" :
            continueRoutine = False
      Each JS Frame:
        // Get keys from the event manager
        let KEYS_prac = psychoJS.eventManager.getKeys();

        // Important: Only try to slice if the array actually has items in it!
        if (KEYS_prac.length > 0) {
            let userChoice_prac = KEYS_prac[KEYS_prac.length - 1]; // Cleaner way to get the last item

            // Check if a rating exists AND if the last key was 'return'
            if ((happiness_rating_prac.rating !== undefined) && (userChoice_prac === "return")) {
                continueRoutine = false;
            }
        }
  Routine repeat_practice
    RoutineSettingsComponent repeat_practice
      skipIf = (practice_trials.thisN+1)%(npractice_trials) != 0
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    TextComponent repeat_practice_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = $time_iti
      wrapWidth = 1.4
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      text:
        You have now completed the practice trials.

        Press 'c' to continue to the main trials

        Press 'r' to repeat the practice trials
    KeyboardComponent key_resp_9
      allowedKeys = 'c', 'r'
      forceEndRoutine = True
      startVal [time (s)] = $time_iti
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    CodeComponent saveChoice_15
      Code Type = Auto->JS
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      End Routine:
        # For an unknown reason, psychopy routines do not skip the custom code part of a skiped rountine
        if (practice_trials.thisN +1) % (npractice_trials) == 0:
            keys = event.getKeys()
            Input = keys[-1]

            if Input == 'c' or (practice_trials.thisN +1) == (npractice_trials*3):
                practice_trials.finished = True
            else:
                p_progVal = 1
  Routine instructions12
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    CodeComponent money_reset
      Code Type = Auto->JS
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      Begin Routine:
        current_money = start_money
        progVal = 1
    TextComponent instructions_text_8
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        You have now completed the practice trials and will move on to the full task.

        Press <enter> to start
    KeyboardComponent key_resp_inst_10
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine happiness_trial
    RoutineSettingsComponent happiness_trial
      skipIf = not (happyTrial[trials.thisN])
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    SliderComponent happiness_rating
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = ('1', '2', '3', '4', '5', '6', '7', '8', '9', '10', '11', '12', '13', '14', '15', '16', '17', '18', '19', '20')
      letterHeight = 0.04
      size = (1.3, 0.05)
      startVal [time (s)] = 2.5
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    TextComponent low_end_text_2
      color = black
      letterHeight = 0.04
      pos = (-0.65, 0.07)
      startVal [time (s)] = 2.5
      text = very unhappy
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    TextComponent high_end_text_2
      color = black
      letterHeight = 0.04
      pos = (0.65, 0.07)
      startVal [time (s)] = 2.5
      text = very happy
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    TextComponent question_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How happy are you at this moment?
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    TextComponent exit_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 2.5
      text = Press <enter> to move to the next trial
      wrapWidth = 1.4
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    KeyboardComponent key_resp_6
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 2.5
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    CodeComponent code_8
      Code Type = Both
      Each Frame:
        responses = event.getKeys()
        if happiness_rating.getRating() != None and len(responses)>0 and responses[-1] == "return" :
            continueRoutine = False
      Each JS Frame:
        KEYS = psychoJS.eventManager.getKeys();
        userChoice = KEYS.slice((- 1))[0];
        if (((happiness_rating.rating !== undefined) && (userChoice === "return"))) {
            continueRoutine = false;
        }
  Routine trial_break
    RoutineSettingsComponent trial_break
      skipIf = ((trials.thisN % 66) != 1) | (trials.thisN == 1)
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    TextComponent break_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Break

        Press <enter> when you are ready to resume
    KeyboardComponent key_resp_10
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Thank_you
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    TextComponent thankYouText
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        You have completed the task. Thank you for your participation!

        Please do not close your browser until the screen says to do so.

        The page should automatically redirect you to Prolific once you exit the experiment. In case there is an error, please note the following completion code: C11KEBP2.

        Press <enter> to exit the experiment
    KeyboardComponent key_resp_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 3
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
  Routine instructions_t2_chosen_gamble
    RoutineSettingsComponent instructions_t2_chosen_gamble
      stopVal [duration (s)] = $time_chosen_option
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    PolygonComponent fixation_inst_5a_3
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent intro_gambletop_3
      fillColor = white
      pos = (width, height)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent intro_gamblelow_3
      fillColor = white
      pos = (width, -height)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent intro_gambletop_txt_3
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (width, height)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(intro_gamble_mag2)
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    TextComponent intro_gambletop_p_3
      color = black
      letterHeight = 0.04
      pos [set every repeat] = (width+0.2, height)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{85:.0f}%"
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    TextComponent intro_gamblelow_txt_3
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (width, -height)
      startVal [time (s)] = 0.0
      text = $f"${0:.2f}"
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    TextComponent intro_gamblelow_p_3
      color = black
      letterHeight = 0.04
      pos [set every repeat] = (width+0.2, -height)
      startVal [time (s)] = 0.0
      text = 15%
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  Routine instructions_t1_chosen_gamble
    RoutineSettingsComponent instructions_t1_chosen_gamble
      stopVal [duration (s)] = $time_chosen_option
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    PolygonComponent fixation_inst_5a_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent intro_sure_2
      fillColor = white
      pos = (-width, 0)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent intro_sure_txt_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (-width, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(intro_sure_mag)
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  Routine instructions_t2_outcome
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    TextComponent total_prompt_inst_5a_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Current total: ${5.50+intro_sure_mag:.2f}"
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    PolygonComponent p_outcome_square_3
      fillColor [set every repeat] = red
      lineColor [set every repeat] = red
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (1.5*option_size, 1.5*option_size)
      startVal [time (s)] = 0.0
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    TextComponent intro_outcome_text_3
      color = black
      letterHeight = 0.06
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = Loss!
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    TextComponent intro_outcome_text_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = +\$0.00
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    TextComponent intro_next_trial_txt
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = time_gamble_result
      text = Press the <space bar> to continue
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    KeyboardComponent intro_next_trial_input
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = time_gamble_result
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  Routine intro_iti
    RoutineSettingsComponent intro_iti
      stopVal [duration (s)] = $time_iti
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine repeat_iti
    RoutineSettingsComponent repeat_iti
      skipIf = (practice_trials.thisN+1)%(npractice_trials/3) != 0
      stopVal [duration (s)] = $time_iti
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine repeat_iti_2
    RoutineSettingsComponent repeat_iti_2
      skipIf = ((trials.thisN % 66) != 1) | (trials.thisN == 1)
      stopVal [duration (s)] = $time_iti
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine p_h_iti
    RoutineSettingsComponent p_h_iti
      forceNonSlip = True
      skipIf = not (happyTrial_prac[practice_trials.thisN])
      stopVal [duration (s)] = $time_iti
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine h_iti
    RoutineSettingsComponent h_iti
      skipIf = not (happyTrial[trials.thisN])
      stopVal [duration (s)] = $time_iti
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine consent
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    TextComponent text_9
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        This is an academic research project conducted through the University of Pennsylvania. In this happiness task, you will play a decision making game. The task takes ~40 minutes.

        You must be at least 18 years old to participate. Your participation in this research is voluntary, which means you can choose whether or not to participate without adverse consequences. Your anonymity is assured: the researchers who have requested your participation will not receive any personal information about you except your worker ID, gender, and age. The worker IDs will not be shared with anyone outside the research team nor associated with the collected data. The de-identified data may be stored and distributed for future research studies without additional informed consent. If you have questions about this research, please contact Nicole Rust by emailing nrust@psych.upenn.edu. If you have questions, concerns, or complaints regarding your participation in this research study, or if you have any questions about your rights as a research subject and you cannot reach a member of the study team, you may contact the Office of Regulatory Affairs at the University of Pennsylvania by calling (215) 898-2614 or emailing irb@pobox.upenn.edu.

        By clicking this box below you acknowledge that you have read the above details and consent to participate in this study.
    ButtonComponent button_yes
      bold = True
      fillColor = green
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0.22, -0.45)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text = I agree
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    ButtonComponent button_no
      bold = True
      fillColor = red
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (-0.22, -0.45)
      size = (0.4, 0.1)
      startVal [time (s)] = 0
      text = I disagree (exit experiment)
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    CodeComponent initialize_variables
      Code Type = Both
      Before Experiment:
        import numpy as np # Keep in mind that by default, numpy version is 1.26
        import time
        import sys

        # Set happiness trials
        # numBlocks = 4
        # happyTrialIdx = np.ceil(np.linspace(2, 36*numBlocks, 12*numBlocks))
        # print(sys.version)

        start_money = 5.5 # Start amount
        option_size = 0.25
        width = 0.335
        height = 0.2
        time_first_delay = 2
        time_gamble_show = 1 # in seconds
        time_chosen_option = 1
        time_gamble_result = 1 # time after which they go to the next trial
        time_iti = 1

        numBlocks = 3
        happyTrialIdx = np.hstack((3*np.ones(13*numBlocks), 2*np.ones(14*numBlocks)))
        happyTrialIdx = happyTrialIdx[np.random.permutation(len(happyTrialIdx))]
        happyTrialIdx = np.cumsum(happyTrialIdx)-1

        happyTrial = np.zeros(67*numBlocks)
        for i in happyTrialIdx:
            happyTrial[int(i)] = 1

        happyTrial = (happyTrial != 0)

        #happyTrialIdx_prac = np.ceil(np.linspace(2, 9*10, 3*10))
        happyTrialIdx_prac = np.hstack((3*np.ones(2*10), 2*np.ones(2*10)))
        happyTrialIdx_prac = happyTrialIdx_prac[np.random.permutation(len(happyTrialIdx_prac))]
        happyTrialIdx_prac = np.cumsum(happyTrialIdx_prac)-1

        happyTrial_prac = np.zeros(100)
        for i in happyTrialIdx_prac:
            happyTrial_prac[int(i)] = 1

        happyTrial_prac = (happyTrial_prac != 0)

        #npractice_trials = 1   # Number of practice trails
        npractice_trials = 1   # Number of practice trails
        ntrials          = 198    # Number of trails
        reward_scaler    = 0.2 # Compared to the juice amounts in the real exp
        #ntotal_trials  = ntrials + (npractice_trials*3) # Allow max 3 reapeats of the practice trials
        #reward         = np.linspace(0, 0.5, 11) # All possible reward amounts
        #proba_vec      = np.random.randint(51, size=(ntotal_trials,1))*2 # Generate the probabilities for each ntrials
        #divider        = np.ceil(ntotal_trials*2/len(reward))
        #reward_vec     = np.repeat(reward, divider).reshape(-1,1)
        #reward_vec     = np.random.permutation(reward_vec)
        #sure_option    = reward_vec[0:ntotal_trials]
        #gambles        = np.concatenate((reward_vec[ntotal_trials:ntotal_trials*2], proba_vec), axis=1)
        gamble_result  = np.random.randint(101, size=((ntrials+2),1))/100
        gamble_result_prac = np.random.randint(101, size=(npractice_trials*3,1))/100
        #sure_side      = np.random.randint(2, size=(ntotal_trials,1))

        reward_vec = np.array([[0.15, 1.00, 0.00, 0.50, 0.25, 0.50],
         [0.15, 1.00, 0.00, 0.70, 0.25, 0.30],
         [0.15, 1.00, 0.00, 0.80, 0.25, 0.20],
         [0.15, 1.00, 0.00, 0.40, 0.30, 0.60],
         [0.15, 1.00, 0.00, 0.60, 0.30, 0.40],
         [0.15, 1.00, 0.00, 0.80, 0.30, 0.20],
         [0.25, 1.00, 0.00, 0.30, 0.35, 0.70],
         [0.25, 1.00, 0.00, 0.50, 0.35, 0.50],
         [0.25, 1.00, 0.00, 0.70, 0.35, 0.30],
         [0.35, 1.00, 0.00, 0.20, 0.40, 0.80],
         [0.35, 1.00, 0.00, 0.30, 0.40, 0.70],
         [0.35, 1.00, 0.00, 0.50, 0.40, 0.50],
         [0.15, 1.00, 0.00, 0.30, 0.50, 0.70],
         [0.15, 1.00, 0.00, 0.60, 0.50, 0.40],
         [0.15, 1.00, 0.00, 0.70, 0.50, 0.30],
         [0.15, 1.00, 0.00, 0.80, 0.50, 0.20],
         [0.15, 1.00, 0.00, 0.90, 0.50, 0.10],
         [0.25, 1.00, 0.00, 0.10, 0.50, 0.90],
         [0.25, 1.00, 0.00, 0.30, 0.50, 0.70],
         [0.25, 1.00, 0.00, 0.50, 0.50, 0.50],
         [0.25, 1.00, 0.00, 0.60, 0.50, 0.40],
         [0.25, 1.00, 0.00, 0.70, 0.50, 0.30],
         [0.25, 1.00, 0.00, 0.90, 0.50, 0.10],
         [0.35, 1.00, 0.00, 0.10, 0.50, 0.90],
         [0.35, 1.00, 0.00, 0.30, 0.50, 0.70],
         [0.35, 1.00, 0.00, 0.50, 0.50, 0.50],
         [0.35, 1.00, 0.00, 0.70, 0.50, 0.30],
         [0.25, 1.00, 0.00, 0.00, 0.00, 0.00],
         [0.00, 1.00, 0.00, 0.70, 0.25, 0.30],
         [0.00, 1.00, 0.00, 0.10, 0.30, 0.90],
         [0.00, 1.00, 0.00, 0.70, 0.40, 0.30],
         [0.00, 1.00, 0.00, 0.50, 0.35, 0.50],
         [0.00, 1.00, 0.00, 0.50, 0.50, 0.50]])

        reward_vec[:, [0, 2, 4]] = np.round(reward_vec[:, [0, 2, 4]] * reward_scaler, 2)

        # Catch trial indexes:

        catch_trials_indices = [2,4]
        #catch_trials_indices = [np.random.randint(29)+5, np.random.randint(29) + 38] # We want them to be in the 1st block, in each half of the block
        catch_trials_options = [[0.06, 1.00, 0.00, 0.70, 0.00, 0.30], [0.00, 0.30, 0.07, 0.70, 0.00, 1.00]]

        # Intro trials

        intro_sure_mag = np.max(reward_vec[:,0])
        intro_gamble_mag = np.sort(np.unique(reward_vec[:,0]))[-2]
        intro_sure_mag2 = np.sort(np.unique(reward_vec[:,0]))[-3]
        intro_gamble_mag2 = np.sort(np.unique(reward_vec[:,0]))[-2]

        # Final option array with trial permutation

        options_vec_reversed = reward_vec[:,[2, 3, 4, 5, 0, 1]]
        options1 = np.random.permutation(np.vstack((reward_vec,options_vec_reversed)))
        options1 = np.insert(options1, catch_trials_indices, catch_trials_options, axis=0)
        options2 = np.random.permutation(np.vstack((reward_vec,options_vec_reversed)))
        options3 = np.random.permutation(np.vstack((reward_vec,options_vec_reversed)))
        options_prac = np.random.permutation(np.vstack((reward_vec,options_vec_reversed)))[1:31]
        options = np.vstack((options1, options2, options3)) # All this is done to respect the pseudorandomization of the task

        # Format functions:

        def mag(x):
            return f"${x:.2f}"

        def prob(x):
            if x == 0:
                return ""
            else:
                return f"{x*100:.0f}%"

        def trial_type(trial_array):
            sure_left = False
            forced_trial = False
            trial_side_left = False
            forced_type_sure = False

            if (trial_array[1]==1) and (trial_array[0]!=0) and (trial_array[5]!=0): # Choice sure left
                sure_left = True
                forced_trial = False
            elif (trial_array[5]==1) and (trial_array[4]!=0) and (trial_array[3]!=0):  # Choice sure right
                sure_left = False
                forced_trial = False
            elif (trial_array[0]==0) and (trial_array[1]==1): # forced gamble right
                trial_side_left = False
                forced_trial = True
                forced_type_sure = False
            elif (trial_array[4]==0) and (trial_array[5]==1): # forced gamble left
                trial_side_left = True
                forced_trial = True
                forced_type_sure = False
            elif (trial_array[1]==1): # forced sure left
                trial_side_left = True
                forced_trial = True
                forced_type_sure = True
            else: # forced sure right
                trial_side_left = False
                forced_trial = True
                forced_type_sure = True

            return sure_left, forced_trial, trial_side_left, forced_type_sure
      Before JS Experiment:
        // Keep in mind that by default, numpy version is 1.26
        // import time
        // import sys

        import * as _ from 'https://cdn.jsdelivr.net/npm/lodash-es@4.17.21/lodash.js';

        // Set happiness trials
        // numBlocks = 4
        // happyTrialIdx = np.ceil(np.linspace(2, 36*numBlocks, 12*numBlocks))
        // print(sys.version)

        // Declare global variables so they can be accessed in any routine
        var sure_left = false;
        var forced_trial = false;
        var trial_side_left = false;
        var forced_type_sure = false;
        var x1, x2, x3, x4;
        var y1, y2, y3, y4;
        var Mag1, P1, Mag2, P2, Mag3, P3, Mag4, P4;
        var failed_check = 0;
        var failed_final_loop = 0;
        var normal_final_loop = 1;
        var consent_loop_n = 1;
        var catch_trial = false;
        var correct_side = null;

        // Add these to your Begin Experiment globals
        var p_progBar = 0;
        var p_progVal = 1
        var progBar = 0;
        var progVal = 1;
        var added_money = 0;
        var outcome_txtW = '';
        var choice = 10;
        var outcome = 0;
        var outcome_color = 'white';


        // Variable declarations (using 'var' to ensure global scope across routines)
        var start_money = 5.5; // Start amount
        var option_size = 0.25;
        var width = 0.335;
        var height = 0.2;
        var time_first_delay = 2;
        var time_gamble_show = 1; // in seconds
        var time_chosen_option = 1;
        var time_gamble_result = 1; // time after which they go to the next trial
        var time_iti = 1;
        var current_money = start_money;

        var numBlocks = 3;

        // Helper function to replicate np.cumsum(arr) - 1
        function cumSumMinusOne(arr) {
            let result = [];
            let sum = 0;
            for (let i = 0; i < arr.length; i++) {
                sum += arr[i];
                result.push(sum - 1);
            }
            return result;
        }

        // Create arrays of 3s and 2s, combine them (np.hstack)
        let happy_part1 = Array(13 * numBlocks).fill(3);
        let happy_part2 = Array(14 * numBlocks).fill(2);
        let happyTrialIdx = happy_part1.concat(happy_part2);

        // Shuffle and cumsum
        happyTrialIdx = _.shuffle(happyTrialIdx);
        happyTrialIdx = cumSumMinusOne(happyTrialIdx);

        var happyTrial = Array(67 * numBlocks).fill(0);
        for (let i = 0; i < happyTrialIdx.length; i++) {
            happyTrial[happyTrialIdx[i]] = 1;
        }
        happyTrial = happyTrial.map(x => x !== 0);

        // Practice trials setup
        let happy_prac_part1 = Array(2 * 10).fill(3);
        let happy_prac_part2 = Array(2 * 10).fill(2);
        let happyTrialIdx_prac = happy_prac_part1.concat(happy_prac_part2);

        happyTrialIdx_prac = _.shuffle(happyTrialIdx_prac);
        happyTrialIdx_prac = cumSumMinusOne(happyTrialIdx_prac);

        var happyTrial_prac = Array(100).fill(0);
        for (let i = 0; i < happyTrialIdx_prac.length; i++) {
            happyTrial_prac[happyTrialIdx_prac[i]] = 1;
        }
        happyTrial_prac = happyTrial_prac.map(x => x !== 0);


        var npractice_trials = 10;   // Number of practice trails
        var ntrials          = 198;  // Number of trails
        var reward_scaler    = 0.2;  // Compared to the juice amounts in the real exp

        // Generate random probabilities
        var gamble_result = Array.from({length: (ntrials+2)}, () => [Math.floor(Math.random() * 101) / 100]);
        var gamble_result_prac = Array.from({length: npractice_trials * 3}, () => [Math.floor(Math.random() * 101) / 100]);

        var reward_vec = [
            [0.15, 1.00, 0.00, 0.50, 0.25, 0.50],
            [0.15, 1.00, 0.00, 0.70, 0.25, 0.30],
            [0.15, 1.00, 0.00, 0.80, 0.25, 0.20],
            [0.15, 1.00, 0.00, 0.40, 0.30, 0.60],
            [0.15, 1.00, 0.00, 0.60, 0.30, 0.40],
            [0.15, 1.00, 0.00, 0.80, 0.30, 0.20],
            [0.25, 1.00, 0.00, 0.30, 0.35, 0.70],
            [0.25, 1.00, 0.00, 0.50, 0.35, 0.50],
            [0.25, 1.00, 0.00, 0.70, 0.35, 0.30],
            [0.35, 1.00, 0.00, 0.20, 0.40, 0.80],
            [0.35, 1.00, 0.00, 0.30, 0.40, 0.70],
            [0.35, 1.00, 0.00, 0.50, 0.40, 0.50],
            [0.15, 1.00, 0.00, 0.30, 0.50, 0.70],
            [0.15, 1.00, 0.00, 0.60, 0.50, 0.40],
            [0.15, 1.00, 0.00, 0.70, 0.50, 0.30],
            [0.15, 1.00, 0.00, 0.80, 0.50, 0.20],
            [0.15, 1.00, 0.00, 0.90, 0.50, 0.10],
            [0.25, 1.00, 0.00, 0.10, 0.50, 0.90],
            [0.25, 1.00, 0.00, 0.30, 0.50, 0.70],
            [0.25, 1.00, 0.00, 0.50, 0.50, 0.50],
            [0.25, 1.00, 0.00, 0.60, 0.50, 0.40],
            [0.25, 1.00, 0.00, 0.70, 0.50, 0.30],
            [0.25, 1.00, 0.00, 0.90, 0.50, 0.10],
            [0.35, 1.00, 0.00, 0.10, 0.50, 0.90],
            [0.35, 1.00, 0.00, 0.30, 0.50, 0.70],
            [0.35, 1.00, 0.00, 0.50, 0.50, 0.50],
            [0.35, 1.00, 0.00, 0.70, 0.50, 0.30],
            [0.25, 1.00, 0.00, 0.00, 0.00, 0.00],
            [0.00, 1.00, 0.00, 0.70, 0.25, 0.30],
            [0.00, 1.00, 0.00, 0.10, 0.30, 0.90],
            [0.00, 1.00, 0.00, 0.70, 0.40, 0.30],
            [0.00, 1.00, 0.00, 0.50, 0.35, 0.50],
            [0.00, 1.00, 0.00, 0.50, 0.50, 0.50]
        ];

        // Scale and round columns 0, 2, and 4
        for (let i = 0; i < reward_vec.length; i++) {
            reward_vec[i][0] = parseFloat((reward_vec[i][0] * reward_scaler).toFixed(2));
            reward_vec[i][2] = parseFloat((reward_vec[i][2] * reward_scaler).toFixed(2));
            reward_vec[i][4] = parseFloat((reward_vec[i][4] * reward_scaler).toFixed(2));
        }

        // 1. Extract all values from the first column (equivalent to reward_vec[:,0])
        let first_col = reward_vec.map(row => row[0]);

        // 2. Filter for unique values, then sort them in ascending order
        let unique_sorted = [...new Set(first_col)].sort((a, b) => a - b);

        // 3. Assign the variables based on their position from the end of the array
        var intro_sure_mag = Math.max(...first_col);                             // np.max
        var intro_gamble_mag = unique_sorted[unique_sorted.length - 2];          // [-2]
        var intro_sure_mag2 = unique_sorted[unique_sorted.length - 3];          // [-3]
        var intro_gamble_mag2 = unique_sorted[unique_sorted.length - 2];        // [-2]

        let options_vec_reversed = reward_vec.map(row => [row[2], row[3], row[4], row[5], row[0], row[1]]);
        let vstacked_options = reward_vec.concat(options_vec_reversed);

        var options1 = _.shuffle([...vstacked_options]);
        var options2 = _.shuffle([...vstacked_options]);
        var options3 = _.shuffle([...vstacked_options]);

        // Catch trials:

        // 1. Generate the random indices
        // Math.floor(Math.random() * 34) generates a number from 0 to 33
        let idx_1 = Math.floor(Math.random() * 29)+5;
        //let idx_1 = 2;
        let idx_2 = Math.floor(Math.random() * 29) + 38;
        //let idx_2 = 4;
        let catch_trials_indices = [idx_1, idx_2];

        // 2. Define the catch trials
        let catch_trial_1 = [0.06, 1.00, 0.00, 0.70, 0.00, 0.30];
        let catch_trial_2 = [0.00, 0.30, 0.07, 0.70, 0.00, 1.00];

        // 3. Insert into the options1 array backwards to avoid shift bugs
        options1.splice(idx_2, 0, catch_trial_2);
        options1.splice(idx_1, 0, catch_trial_1);

        // Sliced to match your new Python array limits [1:31]
        var options_prac = _.shuffle([...vstacked_options]).slice(1, 31);
        var options = options1.concat(options2, options3);

        // ==========================================
        // Formatting Functions
        // ==========================================

        window.mag = function(x) {
            return "$" + parseFloat(x).toFixed(2);
        };

        window.prob = function(x) {
            if (x === 0) {
                return "";
            } else {
                return (x * 100).toFixed(0) + "%";
            }
        };

        window.trial_type = function(trial_array) {
            let sure_left = false;
            let forced_trial = false;
            let trial_side_left = false;
            let forced_type_sure = false;

            if ((trial_array[1] === 1) && (trial_array[0] !== 0) && (trial_array[5] !== 0)) {
                sure_left = true;
                forced_trial = false;
            } else if ((trial_array[5] === 1) && (trial_array[4] !== 0) && (trial_array[3] !== 0)) {
                sure_left = false;
                forced_trial = false;
            } else if ((trial_array[0] === 0) && (trial_array[1] === 1)) {
                trial_side_left = false;
                forced_trial = true;
                forced_type_sure = false;
            } else if ((trial_array[4] === 0) && (trial_array[5] === 1)) {
                trial_side_left = true;
                forced_trial = true;
                forced_type_sure = false;
            } else if (trial_array[1] === 1) {
                trial_side_left = true;
                forced_trial = true;
                forced_type_sure = true;
            } else {
                trial_side_left = false;
                forced_trial = true;
                forced_type_sure = true;
            }

            // JavaScript cannot return raw multiple variables like Python.
            // Instead, we return them packaged inside an Object.
            return {
                sure_left: sure_left,
                forced_trial: forced_trial,
                trial_side_left: trial_side_left,
                forced_type_sure: forced_type_sure
            };
        };
      Begin Experiment:
        startTime = time.strftime("%Y-%m-%d_%H.%M.%S")
        thisExp.addData("dateTime", startTime)
        thisExp.addData('catch_trials_indices', catch_trials_indices)
      Begin JS Experiment:
        let startTime = new Date().toISOString().replace('T', '_').replace(/:/g, '.').split('.')[0];
        console.log("dateTime:", startTime);
        psychoJS.experiment.addData('start_time', startTime);
        psychoJS.experiment.addData('catch_trials_indices', catch_trials_indices);
      Begin JS Routine:
        console.log("current money: ", current_money);
      Begin Routine:
        current_money = start_money
        failed_check = 0
        failed_final_loop = 0
        normal_final_loop = 1
        consent_loop_n = 1
      End JS Routine:
        if (button_no.isClicked) {  // Replace with your specific condition
            consent_loop_n = 0;
            let new_completed_url = 'https://app.prolific.com/submissions/complete?cc=CCPK7ZXJ';
            let existing_cancelled_url = psychoJS._config.experiment.cancelledUrl;
            psychoJS.setRedirectUrls(new_completed_url, existing_cancelled_url);
        }
      End Routine:
        if button_no.wasClicked:
            consent_loop_n = 0
  Routine happy_overall
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    TextComponent question_3
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Taken together, how happy are you right now overall? 
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    SliderComponent happiness_rating_overall
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = ('1', '2', '3', '4', '5', '6', '7', '8', '9', '10', '11', '12', '13', '14', '15', '16', '17', '18', '19', '20')
      letterHeight = 0.04
      size = (1.3, 0.05)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    TextComponent low_end_text_3
      color = black
      letterHeight = 0.04
      pos = (-0.65, 0.07)
      startVal [time (s)] = 0
      text = very unhappy
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    TextComponent high_end_text_3
      color = black
      letterHeight = 0.04
      pos = (0.65, 0.07)
      startVal [time (s)] = 0
      text = very happy
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    KeyboardComponent key_resp_7
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0
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    TextComponent exit_text_4
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0
      text = Click to enter your answer. Press <enter> to move to the next screen.
      wrapWidth = 1.4
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    CodeComponent code_4
      Code Type = Both
      Each Frame:
        responses = event.getKeys()
        if happiness_rating_overall.getRating() != None and len(responses)>0 and responses[-1] == "return" :
            continueRoutine = False
      Each JS Frame:
        KEYS_overa = psychoJS.eventManager.getKeys();
        userChoice_overa = KEYS_overa.slice((- 1))[0];
        if (((happiness_rating_overall.rating !== undefined) && (userChoice_overa === "return"))) {
            continueRoutine = false;
        }
  Routine happy_base
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    SliderComponent happiness_rating_baseline
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = ('1', '2', '3', '4', '5', '6', '7', '8', '9', '10', '11', '12', '13', '14', '15', '16', '17', '18', '19', '20')
      letterHeight = 0.04
      size = (1.3, 0.05)
      startVal [time (s)] = 2.5
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20)
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    TextComponent low_end_text_5
      color = black
      letterHeight = 0.04
      pos = (-0.65, 0.07)
      startVal [time (s)] = 2.5
      text = very unhappy
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    TextComponent high_end_text_5
      color = black
      letterHeight = 0.04
      pos = (0.65, 0.07)
      startVal [time (s)] = 2.5
      text = very happy
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    TextComponent question_5
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = How happy are you at this moment?
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    TextComponent exit_text_3
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 2.5
      text = Click to select your answer. Press <enter> to continue to the next screen.
      wrapWidth = 1.4
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    KeyboardComponent key_resp_8
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 2.5
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    CodeComponent code
      Code Type = Both
      Each Frame:
        responses = event.getKeys()
        if happiness_rating_baseline.getRating() != None and len(responses)>0 and responses[-1] == "return" :
            continueRoutine = False
      Each JS Frame:
        KEYS_base = psychoJS.eventManager.getKeys();
        userChoice_base = KEYS_base.slice((- 1))[0];
        if (((happiness_rating_baseline.rating !== undefined) && (userChoice_base === "return"))) {
            continueRoutine = false;
        }
  Routine instructions10_2
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    TextComponent instructions_text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        To ensure the quality of our data, we have included a few trials designed to check your understanding of the options.

        It would be best to complete the entire task with minimal breaks. If you need to take a break, please do so on the break screen.
    TextComponent Continue_txt_6
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <enter> to continue
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    KeyboardComponent key_resp_inst_11
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p_options_show
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    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        console.log("current money: ", current_money);
        // Get current trial index
        let trialN = practice_trials.thisN;

        // Grab the options for this trial and save to data
        let trial_array = options_prac[trialN];
        psychoJS.experiment.addData('options', trial_array);

        // Grab the float gamble result and save to data
        let gamble_resulty = gamble_result_prac[trialN][0];
        psychoJS.experiment.addData('gamble_result', gamble_resulty);

        // ---------------------------------------------------------
        // Determine the type of trial using our global function
        // ---------------------------------------------------------
        let trial_results = window.trial_type(trial_array);

        sure_left = trial_results.sure_left;
        forced_trial = trial_results.forced_trial;
        trial_side_left = trial_results.trial_side_left;
        forced_type_sure = trial_results.forced_type_sure;

        // ---------------------------------------------------------
        // Determine the coordinates and components of the boxes
        // ---------------------------------------------------------

        // We can safely use the global variables we declared in Begin Experiment
        x1 = -width;
        x2 = -width;
        x3 = width;
        x4 = width;

        if (!forced_trial) { // choice trial
            allowed_keys = ["left", "right", "ArrowLeft", "ArrowRight"];

            if (sure_left) { // sure option on left side
                y1 = 0;
                y2 = 2; // Not showing
                y3 = height;
                y4 = -height;
                Mag1 = options_prac[trialN][0];
                P1 = 0;
                Mag2 = 0;
                P2 = 0;
                Mag3 = options_prac[trialN][4];
                P3 = options_prac[trialN][5];
                Mag4 = options_prac[trialN][2];
                P4 = options_prac[trialN][3];
            } else { // sure option on the right side
                y1 = height;
                y2 = -height;
                y3 = 0;
                y4 = 2; // Not showing
                Mag1 = options_prac[trialN][2];
                P1 = options_prac[trialN][3];
                Mag2 = options_prac[trialN][0];
                P2 = options_prac[trialN][1];
                Mag3 = options_prac[trialN][4];
                P3 = 0;
                Mag4 = 0;
                P4 = 0;
            }
        } else { // forced option
            if (forced_type_sure) { // Forced sure option
                if (trial_side_left) { // option on the left
                    y1 = 0;
                    y2 = 2; // Not showing
                    y3 = 2; // Not showing
                    y4 = 2; // Not showing
                    Mag1 = options_prac[trialN][0];
                    P1 = 0;
                    Mag2 = 0;
                    P2 = 0;
                    Mag3 = 0;
                    P3 = 0;
                    Mag4 = 0;
                    P4 = 0;
                    allowed_keys = ["left", "ArrowLeft"];
                } else { // option on the right
                    y3 = 0;
                    y1 = 2; // Not showing
                    y2 = 2; // Not showing
                    y4 = 2; // Not showing
                    Mag3 = options_prac[trialN][4];
                    P3 = 0;
                    Mag1 = 0;
                    P1 = 0;
                    Mag2 = 0;
                    P2 = 0;
                    Mag4 = 0;
                    P4 = 0;
                    allowed_keys = ["right", "ArrowRight"];
                }
            } else { // Forced gamble option
                if (trial_side_left) { // option on the left
                    y1 = height;
                    y2 = -height;
                    y3 = 2; // Not showing
                    y4 = 2; // Not showing
                    Mag1 = options_prac[trialN][2];
                    P1 = options_prac[trialN][3];
                    Mag2 = options_prac[trialN][0];
                    P2 = options_prac[trialN][1];
                    Mag3 = 0;
                    P3 = 0;
                    Mag4 = 0;
                    P4 = 0;
                    allowed_keys = ["left", "ArrowLeft"];
                } else { // option on the right
                    y1 = 2; // Not showing
                    y2 = 2; // Not showing
                    y3 = height;
                    y4 = -height;
                    Mag3 = options_prac[trialN][4];
                    P3 = options_prac[trialN][5];
                    Mag4 = options_prac[trialN][2];
                    P4 = options_prac[trialN][3];
                    Mag1 = 0;
                    P1 = 0;
                    Mag2 = 0;
                    P2 = 0;
                    allowed_keys = ["right", "ArrowRight"];
                }
            }
        }
        console.log("Allowed keys: ", allowed_keys);
      Begin Routine:
        trial_array = options_prac[practice_trials.thisN,:]
        thisExp.addData('options', trial_array)
        gamble_resulty = gamble_result_prac[practice_trials.thisN]
        thisExp.addData('gamble_result', gamble_resulty)

        # Determine the type of trial

        [sure_left, forced_trial, trial_side_left, forced_type_sure] = trial_type(trial_array)

        # Determine the coordonates and components of the boxes

        x1 = -width
        x2 = -width
        x3 = width
        x4 = width
        if not(forced_trial): # choice trial
            allowed_keys = ["left", "right"]
            if sure_left: # sure option on left side
                y1 = 0
                y2 = 2 # Not showing
                y3 = height
                y4 = -height
                Mag1 = options_prac[practice_trials.thisN,0]
                P1 = 0
                Mag2 = 0
                P2 = 0
                Mag3 = options_prac[practice_trials.thisN,4]
                P3 = options_prac[practice_trials.thisN,5]
                Mag4 = options_prac[practice_trials.thisN,2]
                P4 = options_prac[practice_trials.thisN,3]
            else: # sure option on the right side
                y1 = height
                y2 = -height
                y3 = 0
                y4 = 2 # Not showing
                Mag1 = options_prac[practice_trials.thisN,2]
                P1 = options_prac[practice_trials.thisN,3]
                Mag2 = options_prac[practice_trials.thisN,0]
                P2 = options_prac[practice_trials.thisN,1]
                Mag3 = options_prac[practice_trials.thisN,4]
                P3 = 0
                Mag4 = 0
                P4 = 0
        else: # forced option
            if forced_type_sure: # Forced sure option
                if trial_side_left: # option on the left
                    y1 = 0
                    y2 = 2 # Not showing
                    y3 = 2 # Not showing
                    y4 = 2 # Not showing
                    Mag1 = options_prac[practice_trials.thisN,0]
                    P1 = 0
                    Mag2 = 0
                    P2 = 0
                    Mag3 = 0
                    P3 = 0
                    Mag4 = 0
                    P4 = 0
                    allowed_keys = ["left", "left"]
                else: # option on the right
                    y3 = 0
                    y1 = 2 # Not showing
                    y2 = 2 # Not showing
                    y4 = 2 # Not showing
                    Mag3 = options_prac[practice_trials.thisN,4]
                    P3 = 0
                    Mag1 = 0
                    P1 = 0
                    Mag2 = 0
                    P2 = 0
                    Mag4 = 0
                    P4 = 0
                    allowed_keys = ["right", "right"]

            else: # Forced gamble option
                if trial_side_left: # option on the left
                    y1 = height
                    y2 = -height
                    y3 = 2 # Not showing
                    y4 = 2 # Not showing
                    Mag1 = options_prac[practice_trials.thisN,2]
                    P1 = options_prac[practice_trials.thisN,3]
                    Mag2 = options_prac[practice_trials.thisN,0]
                    P2 = options_prac[practice_trials.thisN,1]
                    Mag3 = 0
                    P3 = 0
                    Mag4 = 0
                    P4 = 0
                    allowed_keys = ["left", "left"]
                else: # option on the right
                    y1 = 2 # Not showing
                    y2 = 2 # Not showing
                    y3 = height
                    y4 = -height
                    Mag3 = options_prac[practice_trials.thisN,4]
                    P3 = options_prac[practice_trials.thisN,5]
                    Mag4 = options_prac[practice_trials.thisN,2]
                    P4 = options_prac[practice_trials.thisN,3]
                    Mag1 = 0
                    P1 = 0
                    Mag2 = 0
                    P2 = 0
                    allowed_keys = ["right", "right"]
    TextComponent practice_txt_2
      color = black
      letterHeight = 0.05
      pos = (-0.6, 0.4)
      startVal [time (s)] = 0.0
      text = Practice
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    PolygonComponent p_fixation_cross_4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent p_box1
      fillColor = white
      pos [set every repeat] = (x1, y1)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent p_box2
      fillColor = white
      pos [set every repeat] = (x2, y2)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent p_box3
      fillColor = white
      pos [set every repeat] = (x3, y3)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent p_box4
      fillColor = white
      pos [set every repeat] = (x4, y4)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent p_box1_mag
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x1, y1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag1)
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    TextComponent p_box1_P
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x1-0.2, y1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P1)
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    TextComponent p_box2_mag
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x2, y2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag2)
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    TextComponent p_box2_P
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x2-0.2, y2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P2)
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    TextComponent p_box3_mag
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x3, y3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag3)
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    TextComponent p_box3_P
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x3+0.2, y3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P3)
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    TextComponent p_box4_mag
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x4, y4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag4)
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    TextComponent p_box4_P
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x4+0.2, y4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P4)
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    TextComponent p_Late_input
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0
      text = Choose an option by pressing the left or right arrow
      wrapWidth = 1.4
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    KeyboardComponent p_choice
      allowedKeys [set every repeat] = allowed_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine p_chosen_option
    RoutineSettingsComponent p_chosen_option
      stopVal [duration (s)] = $time_chosen_option
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    CodeComponent p_chosen_option_code
      Code Type = Both
      Begin JS Routine:
        //let p_inputs = p_choice.keys;
        //let p_userchoice = p_inputs;
        //
        //// PsychoJS often stores keyboard responses as an array (e.g., ['left']).
        //// This check ensures we extract just the string value to prevent matching errors.
        //if (Array.isArray(p_userchoice) && p_userchoice.length > 0) {
        //    p_userchoice = p_userchoice[p_userchoice.length - 1];
        //}
        //
        //let choice; // Declare 'choice' locally for this routine
        //
        //if (p_userchoice === 'left') {
        //    y3 = 2;
        //    y4 = 2;
        //    choice = 0;
        //} else {
        //    y1 = 2;
        //    y2 = 2;
        //    choice = 1;
        //}
        //
        //// Translate thisExp to the correct PsychoJS equivalent
        //psychoJS.experiment.addData('choice_prac', choice);
        //

        let p_inputs = p_choice.keys;
        let p_userchoice = p_inputs;

        // 1. Safely extract the last key pressed
        if (Array.isArray(p_userchoice)) {
            if (p_userchoice.length > 0) {
                p_userchoice = p_userchoice[p_userchoice.length - 1];
            } else {
                p_userchoice = "none"; // Explicitly catch empty arrays
            }
        }

        // 2. Print to browser console (Press F12 in your browser to see this during the experiment!)
        console.log("PsychoJS detected key: ", p_userchoice);

        // 3. Explicitly check for 'left' OR 'ArrowLeft'
        if (p_userchoice === 'left' || p_userchoice === 'ArrowLeft') {
            y3 = 2;
            y4 = 2;
            choice = 0;
        }
        // 4. Explicitly check for 'right' OR 'ArrowRight' (No more catch-all 'else'!)
        else if (p_userchoice === 'right' || p_userchoice === 'ArrowRight') {
            y1 = 2;
            y2 = 2;
            choice = 1;
        }
        else {
            // 5. If they somehow didn't press left or right, log a warning
            console.log("WARNING: Invalid key press or timeout!");
            // You can set fallback coordinates here if needed
        }

        psychoJS.experiment.addData('choice_prac', choice);
      Begin Routine:
        p_inputs = p_choice.keys
        p_userchoice = p_inputs

        if p_userchoice == 'left':
            y3 = 2
            y4 = 2
            choice = 0
        else:
            y1 = 2
            y2 = 2
            choice = 1

        thisExp.addData('choice_prac', choice)
    PolygonComponent fixation_5
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent p_box1_2
      fillColor = white
      pos [set every repeat] = (x1, y1)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent p_box2_2
      fillColor = white
      pos [set every repeat] = (x2, y2)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent p_box3_2
      fillColor = white
      pos [set every repeat] = (x3, y3)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent p_box4_2
      fillColor = white
      pos [set every repeat] = (x4, y4)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent p_box1_mag_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x1, y1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag1)
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    TextComponent p_box1_P_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x1-0.2, y1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P1)
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    TextComponent p_box2_mag_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x2, y2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag2)
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    TextComponent p_box2_P_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x2-0.2, y2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P2)
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    TextComponent p_box3_mag_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x3, y3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag3)
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    TextComponent p_box3_P_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x3+0.2, y3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P3)
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    TextComponent p_box4_mag_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x4, y4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag4)
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    TextComponent p_box4_P_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x4+0.2, y4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P4)
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    TextComponent practice_txt_3
      color = black
      letterHeight = 0.05
      pos = (-0.6, 0.4)
      startVal [time (s)] = 0.0
      text = Practice
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  Routine options_show
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    CodeComponent code_10
      Code Type = Both
      Begin JS Routine:
        // Get current trial index
        let trialN = trials.thisN;

        // Grab the options for this trial and save to data
        let trial_array = options[trialN];
        psychoJS.experiment.addData('options', trial_array);

        // Grab the float gamble result and save to data
        let gamble_resulty = gamble_result[trialN][0];
        psychoJS.experiment.addData('gamble_result', gamble_resulty);

        // ---------------------------------------------------------
        // Determine the type of trial using our global function
        // ---------------------------------------------------------
        let trial_results = window.trial_type(trial_array);

        sure_left = trial_results.sure_left;
        forced_trial = trial_results.forced_trial;
        trial_side_left = trial_results.trial_side_left;
        forced_type_sure = trial_results.forced_type_sure;

        // Change the type of trial if this is a catch trial
        catch_trial = false;
        if (trials.thisN === catch_trials_indices[0]) {
            forced_trial = false;
            sure_left = true;
            catch_trial = true;
            correct_side = 0; // left
        } else if (trials.thisN === (catch_trials_indices[1] + 1)) {
            forced_trial = false;
            sure_left = false;
            catch_trial = true;
            correct_side = 0; // left
        }
        psychoJS.experiment.addData('catch_trial', Number(catch_trial));

        // ---------------------------------------------------------
        // Determine the coordinates and components of the boxes
        // ---------------------------------------------------------

        // We can safely use the global variables we declared in Begin Experiment
        x1 = -width;
        x2 = -width;
        x3 = width;
        x4 = width;

        if (!forced_trial) { // choice trial
            allowed_keys = ["left", "right", "ArrowLeft", "ArrowRight"];

            if (sure_left) { // sure option on left side
                y1 = 0;
                y2 = 2; // Not showing
                y3 = height;
                y4 = -height;
                Mag1 = options[trialN][0];
                P1 = 0;
                Mag2 = 0;
                P2 = 0;
                Mag3 = options[trialN][4];
                P3 = options[trialN][5];
                Mag4 = options[trialN][2];
                P4 = options[trialN][3];
            } else { // sure option on the right side
                y1 = height;
                y2 = -height;
                y3 = 0;
                y4 = 2; // Not showing
                Mag1 = options[trialN][2];
                P1 = options[trialN][3];
                Mag2 = options[trialN][0];
                P2 = options[trialN][1];
                Mag3 = options[trialN][4];
                P3 = 0;
                Mag4 = 0;
                P4 = 0;
            }
        } else { // forced option
            if (forced_type_sure) { // Forced sure option
                if (trial_side_left) { // option on the left
                    y1 = 0;
                    y2 = 2; // Not showing
                    y3 = 2; // Not showing
                    y4 = 2; // Not showing
                    Mag1 = options[trialN][0];
                    P1 = 0;
                    Mag2 = 0;
                    P2 = 0;
                    Mag3 = 0;
                    P3 = 0;
                    Mag4 = 0;
                    P4 = 0;
                    allowed_keys = ["left", "ArrowLeft"];
                } else { // option on the right
                    y3 = 0;
                    y1 = 2; // Not showing
                    y2 = 2; // Not showing
                    y4 = 2; // Not showing
                    Mag3 = options[trialN][4];
                    P3 = 0;
                    Mag1 = 0;
                    P1 = 0;
                    Mag2 = 0;
                    P2 = 0;
                    Mag4 = 0;
                    P4 = 0;
                    allowed_keys = ["right", "ArrowRight"];
                }
            } else { // Forced gamble option
                if (trial_side_left) { // option on the left
                    y1 = height;
                    y2 = -height;
                    y3 = 2; // Not showing
                    y4 = 2; // Not showing
                    Mag1 = options[trialN][2];
                    P1 = options[trialN][3];
                    Mag2 = options[trialN][0];
                    P2 = options[trialN][1];
                    Mag3 = 0;
                    P3 = 0;
                    Mag4 = 0;
                    P4 = 0;
                    allowed_keys = ["left", "ArrowLeft"];
                } else { // option on the right
                    y1 = 2; // Not showing
                    y2 = 2; // Not showing
                    y3 = height;
                    y4 = -height;
                    Mag3 = options[trialN][4];
                    P3 = options[trialN][5];
                    Mag4 = options[trialN][2];
                    P4 = options[trialN][3];
                    Mag1 = 0;
                    P1 = 0;
                    Mag2 = 0;
                    P2 = 0;
                    allowed_keys = ["right", "ArrowRight"];
                }
            }
        }

        console.log("Allowed keys: ", allowed_keys);
      Begin Routine:
        trial_array = options[trials.thisN,:]
        thisExp.addData('options', trial_array)
        gamble_resulty = gamble_result[trials.thisN]
        thisExp.addData('gamble_result', gamble_resulty)

        # Determine the type of trial

        [sure_left, forced_trial, trial_side_left, forced_type_sure] = trial_type(trial_array)

        # If this a catch trial (only on block 1): choice trial
        catch_trial = False
        if (trials.thisN) == catch_trials_indices[0]:
            forced_trial = False
            sure_left = True
            catch_trial = True
            correct_side = 0 # left
        elif (trials.thisN) == (catch_trials_indices[1]+1):
            forced_trial = False
            sure_left = False
            catch_trial = True
            correct_side = 0 # left
        thisExp.addData('catch_trial', int(catch_trial))

        # Determine the coordonates and components of the boxes

        x1 = -width
        x2 = -width
        x3 = width
        x4 = width
        if not(forced_trial): # choice trial
            allowed_keys = ["left", "right"]
            if sure_left: # sure option on left side
                y1 = 0
                y2 = 2 # Not showing
                y3 = height
                y4 = -height
                Mag1 = options[trials.thisN,0]
                P1 = 0
                Mag2 = 0
                P2 = 0
                Mag3 = options[trials.thisN,4]
                P3 = options[trials.thisN,5]
                Mag4 = options[trials.thisN,2]
                P4 = options[trials.thisN,3]
            else: # sure option on the right side
                y1 = height
                y2 = -height
                y3 = 0
                y4 = 2 # Not showing
                Mag1 = options[trials.thisN,2]
                P1 = options[trials.thisN,3]
                Mag2 = options[trials.thisN,0]
                P2 = options[trials.thisN,1]
                Mag3 = options[trials.thisN,4]
                P3 = 0
                Mag4 = 0
                P4 = 0
        else: # forced option
            if forced_type_sure: # Forced sure option
                if trial_side_left: # option on the left
                    y1 = 0
                    y2 = 2 # Not showing
                    y3 = 2 # Not showing
                    y4 = 2 # Not showing
                    Mag1 = options[trials.thisN,0]
                    P1 = 0
                    Mag2 = 0
                    P2 = 0
                    Mag3 = 0
                    P3 = 0
                    Mag4 = 0
                    P4 = 0
                    allowed_keys = ["left", "left"]
                else: # option on the right
                    y3 = 0
                    y1 = 2 # Not showing
                    y2 = 2 # Not showing
                    y4 = 2 # Not showing
                    Mag3 = options[trials.thisN,4]
                    P3 = 0
                    Mag1 = 0
                    P1 = 0
                    Mag2 = 0
                    P2 = 0
                    Mag4 = 0
                    P4 = 0
                    allowed_keys = ["right", "right"]

            else: # Forced gamble option
                if trial_side_left: # option on the left
                    y1 = height
                    y2 = -height
                    y3 = 2 # Not showing
                    y4 = 2 # Not showing
                    Mag1 = options[trials.thisN,2]
                    P1 = options[trials.thisN,3]
                    Mag2 = options[trials.thisN,0]
                    P2 = options[trials.thisN,1]
                    Mag3 = 0
                    P3 = 0
                    Mag4 = 0
                    P4 = 0
                    allowed_keys = ["left", "left"]
                else: # option on the right
                    y1 = 2 # Not showing
                    y2 = 2 # Not showing
                    y3 = height
                    y4 = -height
                    Mag3 = options[trials.thisN,4]
                    P3 = options[trials.thisN,5]
                    Mag4 = options[trials.thisN,2]
                    P4 = options[trials.thisN,3]
                    Mag1 = 0
                    P1 = 0
                    Mag2 = 0
                    P2 = 0
                    allowed_keys = ["right", "right"]
    TextComponent p_Late_input_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0
      text = Choose an option by pressing the left or right arrow
      wrapWidth = 1.4
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    PolygonComponent fixation_cross_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent box1
      fillColor = white
      pos [set every repeat] = (x1, y1)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent box2
      fillColor = white
      pos [set every repeat] = (x2, y2)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent box3
      fillColor = white
      pos [set every repeat] = (x3, y3)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent box4
      fillColor = white
      pos [set every repeat] = (x4, y4)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent box1_mag
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x1, y1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag1)
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    TextComponent box1_P
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x1-0.2, y1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P1)
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    TextComponent box2_mag
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x2, y2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag2)
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    TextComponent box2_P
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x2-0.2, y2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P2)
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    TextComponent box3_mag
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x3, y3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag3)
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    TextComponent box3_P
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x3+0.2, y3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P3)
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    TextComponent box4_mag
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x4, y4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag4)
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    TextComponent box4_P
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x4+0.2, y4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P4)
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    KeyboardComponent user_choice
      allowedKeys [set every repeat] = allowed_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine chosen_option
    RoutineSettingsComponent chosen_option
      stopVal [duration (s)] = $time_chosen_option
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    CodeComponent chosen_option_code
      Code Type = Both
      Begin JS Routine:
        let p_inputs = user_choice.keys;
        let p_userchoice = p_inputs;

        // 1. Safely extract the last key pressed
        if (Array.isArray(p_userchoice)) {
            if (p_userchoice.length > 0) {
                p_userchoice = p_userchoice[p_userchoice.length - 1];
            } else {
                p_userchoice = "none"; // Explicitly catch empty arrays
            }
        }

        // 2. Print to browser console (Press F12 in your browser to see this during the experiment!)
        console.log("PsychoJS detected key: ", p_userchoice);

        // 3. Explicitly check for 'left' OR 'ArrowLeft'
        if (p_userchoice === 'left' || p_userchoice === 'ArrowLeft') {
            y3 = 2;
            y4 = 2;
            choice = 0;
        }
        // 4. Explicitly check for 'right' OR 'ArrowRight' (No more catch-all 'else'!)
        else if (p_userchoice === 'right' || p_userchoice === 'ArrowRight') {
            y1 = 2;
            y2 = 2;
            choice = 1;
        }
        else {
            // 5. If they somehow didn't press left or right, log a warning
            console.log("WARNING: Invalid key press or timeout!");
            // You can set fallback coordinates here if needed
        }

        psychoJS.experiment.addData('choice', choice);
      Begin Routine:
        p_inputs = user_choice.keys
        p_userchoice = p_inputs

        if p_userchoice == 'left':
            y3 = 2
            y4 = 2
            choice = 0
        else:
            y1 = 2
            y2 = 2
            choice = 1

        thisExp.addData('choice', choice)
    PolygonComponent fixation_7
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    PolygonComponent box1_2
      fillColor = white
      pos [set every repeat] = (x1, y1)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent box2_2
      fillColor = white
      pos [set every repeat] = (x2, y2)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent box3_2
      fillColor = white
      pos [set every repeat] = (x3, y3)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    PolygonComponent box4_2
      fillColor = white
      pos [set every repeat] = (x4, y4)
      shape = rectangle
      size = (option_size, option_size)
      startVal [time (s)] = 0.0
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    TextComponent box1_mag_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x1, y1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag1)
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    TextComponent box1_P_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x1-0.2, y1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P1)
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    TextComponent box2_mag_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x2, y2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag2)
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    TextComponent box2_P_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x2-0.2, y2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P2)
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    TextComponent box3_mag_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x3, y3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag3)
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    TextComponent box3_P_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x3+0.2, y3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P3)
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    TextComponent box4_mag_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x4, y4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $mag(Mag4)
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    TextComponent box4_P_2
      color = black
      letterHeight = 0.055
      pos [set every repeat] = (x4+0.2, y4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prob(P4)
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  Routine p_reward_outcome
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    CodeComponent p_gamble_result_code
      Code Type = Both
      Begin Experiment:
        p_progVal = 1
      Begin JS Routine:
        // Re-fetch trial index for this routine
        let trialN = practice_trials.thisN;

        p_progBar = p_progVal / npractice_trials;
        p_progVal += 1;

        // Clear keyboard buffer in PsychoJS
        psychoJS.eventManager.clearEvents();

        psychoJS.experiment.addData('current_money_prac', current_money);

        added_money = 0;

        // Gamble_result_prac was generated as an array of arrays [[x], [y]]
        // We pull the float value using [0] to make the conditionals below cleaner.
        let current_gamble_res = gamble_result_prac[trialN][0];

        if (choice === 0) {
            if (!forced_trial) { // choice trial
                if (sure_left) { // sure option chosen
                    outcome_txtW = 'Win!';
                    added_money = options_prac[trialN][0];
                    outcome = -1;
                } else { // gamble chosen
                    if (options_prac[trialN][3] >= current_gamble_res) { // gamble win
                        outcome_txtW = 'Win!';
                        added_money = options_prac[trialN][2];
                        outcome = 1;
                    } else { // gamble loose
                        outcome_txtW = 'Loss!';
                        outcome = 0;
                    }
                }
            }
        } else { // User chose right
            if (!forced_trial) { // choice trial
                if (!sure_left) { // sure option chosen
                    outcome_txtW = 'Win!';
                    added_money = options_prac[trialN][4];
                    outcome = -1;
                } else { // gamble chosen
                    if (options_prac[trialN][5] >= current_gamble_res) { // gamble win
                        outcome_txtW = 'Win!';
                        added_money = options_prac[trialN][4];
                        outcome = 1;
                    } else { // gamble loose
                        outcome_txtW = 'Loss!';
                        outcome = 0;
                    }
                }
            }
        }

        if (forced_trial) { // forced choice
            if (forced_type_sure) { // forced sure option
                outcome_txtW = 'Win!';
                outcome = -1;
                if (trial_side_left) { // left side option
                    added_money = options_prac[trialN][0];
                } else { // right side option
                    added_money = options_prac[trialN][4];
                }
            } else { // forced gamble
                if (trial_side_left) {
                    if (options_prac[trialN][3] >= current_gamble_res) { // gamble win
                        outcome_txtW = 'Win!';
                        added_money = options_prac[trialN][2];
                        outcome = 1;
                    } else { // gamble loose
                        outcome_txtW = 'Loss!';
                        outcome = 0;
                    }
                } else { // right side option
                    if (options_prac[trialN][5] >= current_gamble_res) { // gamble win
                        outcome_txtW = 'Win!';
                        added_money = options_prac[trialN][4];
                        outcome = 1;
                    } else { // gamble loose
                        outcome_txtW = 'Loss!';
                        outcome = 0;
                    }
                }
            }
        }

        if (outcome === -1 || outcome === 1) {
            outcome_color = 'green';
        } else {
            outcome_color = 'red';
        }

        current_money += added_money;

        // JavaScript equivalent to f-string if you uncomment it later:
        // let p_money_txt = `$ ${current_money.toFixed(2)}`;

        psychoJS.experiment.addData("outcome_prac", outcome);
        psychoJS.experiment.addData("added_prac", added_money);
      Begin Routine:
        p_progBar = p_progVal/npractice_trials
        p_progVal += 1

        event.clearEvents()

        thisExp.addData('current_money_prac', current_money)

        added_money = 0

        if p_userchoice == 'left':
            if not(forced_trial): # choice trial
                if sure_left: # sure option choosen
                    outcome_txtW = 'Win!'
                    added_money = options_prac[practice_trials.thisN][0]
                    outcome = -1
                else: # gamble choosen
                    if options_prac[practice_trials.thisN][3] >= gamble_result_prac[practice_trials.thisN]: # gamble win
                        outcome_txtW = 'Win!'
                        added_money = options_prac[practice_trials.thisN][2]
                        outcome = 1
                    else: # gamble loose
                        outcome_txtW = 'Loss!'
                        outcome = 0
        else: # User chose right
            if not(forced_trial): # choice trial
                if not(sure_left): # sure option choosen
                    outcome_txtW = 'Win!'
                    added_money = options_prac[practice_trials.thisN][4]
                    outcome = -1
                else: # gamble choosen
                    if options_prac[practice_trials.thisN][5] >= gamble_result_prac[practice_trials.thisN]: # gamble win
                        outcome_txtW = 'Win!'
                        added_money = options_prac[practice_trials.thisN][4]
                        outcome = 1
                    else: # gamble loose
                        outcome_txtW = 'Loss!'
                        outcome = 0

        if forced_trial: # forced choice
            if forced_type_sure: # forced sure option
                outcome_txtW = 'Win!'
                outcome = -1
                if trial_side_left: # left side option
                    added_money = options_prac[practice_trials.thisN][0]
                else: # right side option
                    added_money = options_prac[practice_trials.thisN][4]
            else: # forced gamble
                if trial_side_left:
                    if options_prac[practice_trials.thisN][3]>=gamble_result_prac[practice_trials.thisN]: # gamble win
                        outcome_txtW = 'Win!'
                        added_money = options_prac[practice_trials.thisN][2]
                        outcome = 1
                    else: # gamble loose
                        outcome_txtW = 'Loss!'
                        outcome = 0
                else: # right side option
                    if options_prac[practice_trials.thisN][5]>=gamble_result_prac[practice_trials.thisN]: # gamble win
                        outcome_txtW = 'Win!'
                        added_money = options_prac[practice_trials.thisN][4]
                        outcome = 1
                    else: # gamble loose
                        outcome_txtW = 'Loss!'
                        outcome = 0

        if outcome == -1 or outcome == 1:
            outcome_color = 'green'
        else:
            outcome_color = 'red'

        current_money += added_money

        #p_money_txt = f"$ {current_money:.2f}"

        thisExp.addData("outcome_prac", outcome)
        thisExp.addData("added_prac", added_money)
    TextComponent p_money_prompt
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Current total: ${current_money:.2f}"
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    TextComponent practice_txt
      color = black
      letterHeight = 0.05
      pos = (-0.6, 0.4)
      startVal [time (s)] = 0.0
      text = Practice
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    PolygonComponent p_outcome_square
      fillColor [set every repeat] = $outcome_color
      lineColor [set every repeat] = $outcome_color
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (2*option_size, 2*option_size)
      startVal [time (s)] = 0.0
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    TextComponent p_outcome_text
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $outcome_txtW
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    TextComponent p_reward_txt
      color = black
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"+${added_money:.2f}"
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    ProgressComponent p_prog_bar
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.5, -0.45)
      progress [set every repeat] = p_progBar
      size = (1, 0.03)
      startVal [time (s)] = 0
      units = height
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    TextComponent p_next_trial_txt
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = time_gamble_result
      text = Press the <space bar> to initiate the next trial
      wrapWidth = 1.4
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    PolygonComponent left_progress
      fillColor = white
      pos = (-0.5, -0.45)
      shape = rectangle
      size = (0.004, 0.04)
      startVal [time (s)] = 0.0
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    PolygonComponent right_progress
      fillColor = white
      pos = (0.5, -0.45)
      shape = rectangle
      size = (0.004, 0.04)
      startVal [time (s)] = 0.0
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    KeyboardComponent p_next_trial_input
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = time_gamble_result
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  Routine reward_outcome
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    CodeComponent gamble_result_code
      Code Type = Both
      Begin JS Routine:
        // Get current trial index
        let trialN = trials.thisN;

        progBar = progVal / ntrials;
        progVal += 1;

        // Clear keyboard buffer
        psychoJS.eventManager.clearEvents();

        psychoJS.experiment.addData('current_money', current_money);

        // Check if this is a catch trial!
        if (catch_trial === true) {
            if (choice !== correct_side) {
                failed_check += 1;

                if (failed_check === 2) {
                    failed_final_loop = 1;
                    normal_final_loop = 0;
                    trials.finished = true; // This will safely end the current PsychoJS loop
                }
            }
        }

        added_money = 0;

        // Pull the float value using [0] to make the conditionals below cleaner
        let current_gamble_res = gamble_result[trialN][0];

        if (choice === 0) {
            if (!forced_trial) { // choice trial
                if (sure_left) { // sure option chosen
                    outcome_txtW = 'Win!';
                    added_money = options[trialN][0];
                    outcome = -1;
                } else { // gamble chosen
                    if (options[trialN][3] >= current_gamble_res) { // gamble win
                        outcome_txtW = 'Win!';
                        added_money = options[trialN][2];
                        outcome = 1;
                    } else { // gamble loose
                        outcome_txtW = 'Loss!';
                        outcome = 0;
                    }
                }
            }
        } else { // User chose right
            if (!forced_trial) { // choice trial
                if (!sure_left) { // sure option chosen
                    outcome_txtW = 'Win!';
                    added_money = options[trialN][4];
                    outcome = -1;
                } else { // gamble chosen
                    if (options[trialN][5] >= current_gamble_res) { // gamble win
                        outcome_txtW = 'Win!';
                        added_money = options[trialN][4];
                        outcome = 1;
                    } else { // gamble loose
                        outcome_txtW = 'Loss!';
                        outcome = 0;
                    }
                }
            }
        }

        if (forced_trial) { // forced choice
            if (forced_type_sure) { // forced sure option
                outcome_txtW = 'Win!';
                outcome = -1;
                if (trial_side_left) { // left side option
                    added_money = options[trialN][0];
                } else { // right side option
                    added_money = options[trialN][4];
                }
            } else { // forced gamble
                if (trial_side_left) {
                    if (options[trialN][3] >= current_gamble_res) { // gamble win
                        outcome_txtW = 'Win!';
                        added_money = options[trialN][2];
                        outcome = 1;
                    } else { // gamble loose
                        outcome_txtW = 'Loss!';
                        outcome = 0;
                    }
                } else { // right side option
                    if (options[trialN][5] >= current_gamble_res) { // gamble win
                        outcome_txtW = 'Win!';
                        added_money = options[trialN][4];
                        outcome = 1;
                    } else { // gamble loose
                        outcome_txtW = 'Loss!';
                        outcome = 0;
                    }
                }
            }
        }

        if (outcome === -1 || outcome === 1) {
            outcome_color = 'green';
        } else {
            outcome_color = 'red';
        }

        current_money += added_money;

        // p_money_txt = `$ ${current_money.toFixed(2)}`;
        //
        psychoJS.experiment.addData("outcome", outcome);
        psychoJS.experiment.addData("added_money", added_money);
      Begin Routine:
        progBar = progVal/ntrials
        progVal += 1

        event.clearEvents()

        thisExp.addData('current_money', current_money)

        if catch_trial == True:
            if choice != correct_side:
                failed_check += 1
                if failed_check == 2:
                    failed_final_loop = 1
                    normal_final_loop = 0
                    trials.finished = True

        added_money = 0
        if p_userchoice == 'left':
            if not(forced_trial): # choice trial
                if sure_left: # sure option choosen
                    outcome_txtW = 'Win!'
                    added_money = options[trials.thisN][0]
                    outcome = -1
                else: # gamble choosen
                    if options[trials.thisN][3] >= gamble_result[trials.thisN]: # gamble win
                        outcome_txtW = 'Win!'
                        added_money = options[trials.thisN][2]
                        outcome = 1
                    else: # gamble loose
                        outcome_txtW = 'Loss!'
                        outcome = 0
        else: # User chose right
            if not(forced_trial): # choice trial
                if not(sure_left): # sure option choosen
                    outcome_txtW = 'Win!'
                    added_money = options[trials.thisN][4]
                    outcome = -1
                else: # gamble choosen
                    if options[trials.thisN][5] >= gamble_result[trials.thisN]: # gamble win
                        outcome_txtW = 'Win!'
                        added_money = options[trials.thisN][4]
                        outcome = 1
                    else: # gamble loose
                        outcome_txtW = 'Loss!'
                        outcome = 0

        if forced_trial: # forced choice
            if forced_type_sure: # forced sure option
                outcome_txtW = 'Win!'
                outcome = -1
                if trial_side_left: # left side option
                    added_money = options[trials.thisN][0]
                else: # right side option
                    added_money = options[trials.thisN][4]
            else: # forced gamble
                if trial_side_left:
                    if options[trials.thisN][3]>=gamble_result[trials.thisN]: # gamble win
                        outcome_txtW = 'Win!'
                        added_money = options[trials.thisN][2]
                        outcome = 1
                    else: # gamble loose
                        outcome_txtW = 'Loss!'
                        outcome = 0
                else: # right side option
                    if options[trials.thisN][5]>=gamble_result[trials.thisN]: # gamble win
                        outcome_txtW = 'Win!'
                        added_money = options[trials.thisN][4]
                        outcome = 1
                    else: # gamble loose
                        outcome_txtW = 'Loss!'
                        outcome = 0

        if outcome == -1 or outcome == 1:
            outcome_color = 'green'
        else:
            outcome_color = 'red'

        current_money += added_money

        #p_money_txt = f"$ {current_money:.2f}"
        #
        thisExp.addData("outcome", outcome)
        thisExp.addData("added_money", added_money)
    TextComponent money_prompt
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Current total: ${current_money:.2f}"
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    PolygonComponent outcome_square
      fillColor [set every repeat] = $outcome_color
      lineColor [set every repeat] = $outcome_color
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (2*option_size, 2*option_size)
      startVal [time (s)] = 0.0
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    TextComponent outcome_text_3
      color = black
      letterHeight = 0.06
      pos [set every repeat] = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $outcome_txtW
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    TextComponent reward_txt
      color = black
      letterHeight = 0.05
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"+${added_money:.2f}"
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    ProgressComponent prog_bar
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.5, -0.45)
      progress [set every repeat] = progBar
      size = (1, 0.03)
      startVal [time (s)] = 0
      units = height
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    TextComponent next_trial_txt
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = time_gamble_result
      text = Press the <space bar> to initiate the next trial
      wrapWidth = 1.4
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    PolygonComponent left_progress_3
      fillColor = white
      pos = (-0.5, -0.45)
      shape = rectangle
      size = (0.004, 0.04)
      startVal [time (s)] = 0.0
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    PolygonComponent right_progress_3
      fillColor = white
      pos = (0.5, -0.45)
      shape = rectangle
      size = (0.004, 0.04)
      startVal [time (s)] = 0.0
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    KeyboardComponent next_trial_input
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = time_gamble_result
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  Routine Failed_end
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    CodeComponent url_change_code
      Code Type = Both
      Begin JS Routine:
        if (failed_final_loop === 1) {  // Replace with your specific condition
            let new_completed_url = 'https://app.prolific.com/submissions/complete?cc=C5FQWFLD';
            let existing_cancelled_url = psychoJS._config.experiment.cancelledUrl;
            psychoJS.setRedirectUrls(new_completed_url, existing_cancelled_url);
        }
    TextComponent thankYouText_failed
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        You have missed two attention checks.

        Due to our strict data quality guidelines, your participation in this experiment has been ended. You will automatically be redirected to the Prolific website and will not receive compensation for this study.

        If this page doesn’t close automatically, please note the following completion code: C5FQWFLD, and press <enter> to exit the experiment.
    KeyboardComponent key_resp_12
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 3
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Flow
  Routine consent
  LoopInitiator consent_loop loopType="TrialHandler"
    loopType = random
    nReps = consent_loop_n
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    LoopInitiator Intros loopType="TrialHandler"
      conditionsFile = Introtext.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Intro_text': 'Welcome to the reward and subjective well-being task!\n\nIn this experiment, you will have the opportunity to earn money by playing a gambling task. You will also be asked to rate your happiness at various points as you progress through the task.'},
        {'Intro_text': 'In the next few steps, we will guide you through the task and how it works, you will then do a minimum of 10 practice trials, and finally you will start the task.'},
        {'Intro_text': 'On each trial, you will have the opportunity to earn money. You will be presented with two options, both options will be gambles. Each gamble probability will be indicated by the proportion of the pie that is colored green, each gamble reward size will be indicated by the size of the pie. The probabilities will also be displayed as text. Each gamble has two possible outcomes: either you win and gain the indicated reward, either you lose and earn $0. '},
        {'Intro_text': 'The gamble outcome rewards are BIG or MEDIUM, although a proportion of the gambles will have a SMALL reward with a certain (100%) probability.\nYou will begin the task with $5. The outcome of the choices you make from then on will count for ADDITIONAL money.\nPlease select your gamble choice by pressing the LEFT or RIGHT arrow keys. Once you’ve made your choice the outcome will be applied to your total. \nOn the next screen, you will do a few introductory trials.'}]
      Routine instructions1
    LoopTerminator Intros
    Routine instructions_t1_target_on_choice
    Routine instructions_t1_chosen_gamble
    Routine instructions_t1_outcome
    Routine intro_iti
    Routine instructions_t2_target_on_choice
    Routine instructions_t2_chosen_gamble
    Routine instructions_t2_outcome
    Routine instructions6
    Routine instructions7
    Routine instructions8
    Routine happy_overall
    Routine instructions10
    Routine happy_base
    Routine instructions10_2
    Routine instructions11
    Routine first_delay
    LoopInitiator practice_trials loopType="TrialHandler"
      loopType = sequential
      nReps = npractice_trials*3
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      conditions:
        [{'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
        {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
        {'sureBet_val': -2, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75},
        {'sureBet_val': -1, 'gamble1_val': 0, 'gamble2_val': 3, 'g1_prob': 0.1},
        {'sureBet_val': 3, 'gamble1_val': -100, 'gamble2_val': -100, 'g1_prob': -100},
        {'sureBet_val': -100, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
        {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
        {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
        {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
        {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75},
        {'sureBet_val': 3, 'gamble1_val': -100, 'gamble2_val': -100, 'g1_prob': -100},
        {'sureBet_val': -2, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75},
        {'sureBet_val': -100, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
        {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
        {'sureBet_val': -1, 'gamble1_val': 0, 'gamble2_val': 3, 'g1_prob': 0.1},
        {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
        {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
        {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75},
        {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
        {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5}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
      Routine p_options_show
      Routine p_chosen_option
      Routine p_reward_outcome
      Routine iti
      Routine p_happiness_trial
      Routine p_h_iti
      Routine repeat_practice
      Routine repeat_iti
    LoopTerminator practice_trials
    Routine instructions12
    Routine first_delay
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = ntrials
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      conditions:
        [{'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
        {'sureBet_val': 2, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
        {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
        {'sureBet_val': 0, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.1},
        {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
        {'sureBet_val': 2, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
        {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
        {'sureBet_val': 0, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.5},
        {'sureBet_val': 3, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.75},
        {'sureBet_val': 2, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.75},
        {'sureBet_val': 1, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.75},
        {'sureBet_val': 0, 'gamble1_val': 3, 'gamble2_val': 0, 'g1_prob': 0.75},
        {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
        {'sureBet_val': -2, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
        {'sureBet_val': -1, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
        {'sureBet_val': 0, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.1},
        {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.5},
        {'sureBet_val': -2, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.5},
        {'sureBet_val': -1, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.5},
        {'sureBet_val': 0, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.5},
        {'sureBet_val': -3, 'gamble1_val': 0, 'gamble2_val': -3, 'g1_prob': 0.75}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
      Routine options_show
      Routine chosen_option
      Routine reward_outcome
      Routine iti
      Routine happiness_trial
      Routine h_iti
      Routine trial_break
      Routine repeat_iti_2
    LoopTerminator trials
    LoopInitiator failed_final loopType="TrialHandler"
      loopType = random
      nReps = failed_final_loop
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      Routine Failed_end
    LoopTerminator failed_final
    LoopInitiator final loopType="TrialHandler"
      loopType = random
      nReps = normal_final_loop
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      Routine Thank_you
    LoopTerminator final
  LoopTerminator consent_loop
